---
API: 2.1
OpenSesame: 3.3.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Comprehension and word detection 20201112rev"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/core/Research/projects/Mnetal_Simulation/Siutation_MW/1_OS_scripts"
set disable_garbage_collection yes
set description "Replication study: Pettijohn & Radvansky (2016) Exp 3"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set background white

define sketchpad Break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Take a break.<br/><br/>Press SPACEBAR when you decide continue." x=-32 y=0 z_index=0

define sketchpad Cookie
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Do you use any setting on your web browser that disables cookies from <br/>being stored on your computer? Press the respective KEY as your answer." x=-416 y=-128 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>F</b>: Yes,I have set my explorer up to block all cookies (cookies disabeled). <br/><b>J</b>: No, my computer is set up to accept cookies, I do not know." x=-440 y=0 z_index=0

define keyboard_response Cookie_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response f
	set allowed_responses "f;j"

define sketchpad Debrief
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Most modern theories of text comprehension recognize the fact <br/>that readers' expectedness would affect their understanding. <br/>Readibility and individual knowledge, along with the context <br/>can greatly impact the readers' understanding. In order to <br/>facilitate our research on text comprehension we are interested<br/>in knowing certain factors about you, the turning point in the<br/>story. Specifically we are interested in whether you actually<br/>take the time to read the stories; if not, then some of our <br/>manipulations that rely on changes in the debrief will be <br/>ineffective. So, in order to demonstrate that you have read this<br/>debrief carefully, simply press space bar and ignore the question<br/>below. Instead, please check all four boxes and then press the<br/>corresponding button to proceed to the next screen. <br/>Thank you very much.<br/><br/>" x=-450 y=-200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Where are you completing this study?" x=0 y=224 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>F</b>:At a university  <b>G</b>:At home  <b>H</b>:At work <b>J</b>:Other" x=-250 y=288 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=28 html=yes show_if=always text=Debrief x=-64 y=-256 z_index=0

define keyboard_response Debrief_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE
	set allowed_responses "f;g;h;j;SPACE"

define sketchpad Honest
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="In your honest opinion, should we use your data in our analyses in this study?<br/>Press the respective KEY as your answer." x=-416 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>F</b>:YES   <b>J</b>:NO" x=0 y=0 z_index=0

define keyboard_response Honest_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response f
	set allowed_responses "f;j"

define sketchpad Loading
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Did the words and sentences in this survey load at a constant speed throughout <br/>the entire survey? Press the respective KEY as your answer." x=-416 y=-128 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>F</b>: Yes,the words/sentences loaded quickly and the whole survey ran smoothly. <br/> <b>G</b>: Yes, the words/sentences mostly loaded quickly but there were occasional <br/>delays in the survey. <br/><b>H</b>: No, there was a lot of variation in how quickly the words/sentences loaded. <br/> <b>J</b>: No, the survey started out smoothly but the words/sentences loaded more <br/>slowly towards the end." x=-440 y=0 z_index=0

define keyboard_response Loading_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;g;h;j"

define sketchpad Passage_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[line_text]" x=-450 y=-200 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[probe_type] = f" text="(f:Old word; j:New word)" x=-360 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[probe_type] = v" text="(f:Old word; j:New word)" x=-360 y=-96 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if="[probe_type] = q" text="(f:Yes; j:No)" x=-384 y=-96 z_index=0

define keyboard_response Passage_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response Probe_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;j"

define inline_javascript Prolific
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (window.jatos && jatos.urlQueryParameters.PROLIFIC_PID) {
	    console.log('Prolific information is available')
	    vars.prolific_participant_id = jatos.urlQueryParameters.PROLIFIC_PID
	    vars.prolific_study_id = jatos.urlQueryParameters.STUDY_ID
	    vars.prolific_session_id = jatos.urlQueryParameters.SESSION_ID
	} else {
	    console.log('Prolific information is not available (setting values to -1)')
	    vars.prolific_participant_id = -1
	    vars.prolific_study_id = -1
	    vars.prolific_session_id = -1
	}
	console.log('prolific_participant_id = ' + vars.prolific_participant_id)
	console.log('prolific_study_id = ' + vars.prolific_study_id)
	console.log('prolific_session_id = ' + vars.prolific_session_id)
	__end__
	set _prepare ""

define sketchpad Strange
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Did you notice anything strange in the way the sentences/pictures were loaded <br/>or displayed? Press the respective KEY as your answer." x=-416 y=-128 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="<b>F</b>:YES   <b>J</b>:NO" x=0 y=0 z_index=0

define keyboard_response Strange_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response f
	set allowed_responses "f;j"

define sketchpad Study_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="End of Study. <br/><br/>We thank your participation." x=0 y=-32 z_index=0

define keyboard_response contiue_space
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define sketchpad count_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Story [story_count]" x=-450 y=-200 z_index=0

define sketchpad count_practice
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Practice trial [prac_count]" x=-450 y=-200 z_index=0

define sequence exp_session
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_initiate always
	run exp_trials always

define loop exp_trials
	set source table
	set repeat 50
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[trial_seq]=41"
	setcycle 0 empty_column ""
	run trial_seq

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Prolific always
	run instruction_text always
	run contiue_space always
	run practice_text always
	run contiue_space always
	run prac_session always
	run start_text always
	run contiue_space always
	run exp_session always
	run post_study always
	run Study_end always

define sketchpad instruction_text
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="In this experiment, you will read a series of simple stories <br/>one sentence at a time. <br/><br/>Press the space bar to advance to the next sentence of the story. <br/>After some point in each story, a single word will appear in all  <br/>capital letters.  <br/><br/>If this word was previously mentioned, press `f` with your left  <br/>index finger to select `Old Word`;  <br/>If it was not mentioned in the story, press 'j' with your right  <br/>index finger to select `New Word`.  <br/>Respond to the probes as quickly and accurately as you can.  <br/><br/>After each story, a statement will appear with the word Question  <br/>before it. Choose whether the statement is true by pressing 'f'  <br/>with your left index finger or false by pressing 'j' with your  <br/>right index finger.  <br/>The start of a new story will be signaled by the story number  <br/>in the top of the screen." x=-450 y=-250 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Please press SPACE BAR to continue." x=-224 y=288 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop passage_E01_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Finally, the gang was back together again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "It had been about four months since they last played cards."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Everyone settled around the table, chatting and catching up."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "Someone texted that he was on the way."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "Nick shuffled the cards and dealt them."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text CHATTING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "They joked that his new wife would expect him home soon."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text DEALING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The gang last played cards about four months ago."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_E01_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Finally, the gang was back together again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "It had been about four months since they last played cards."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Everyone settled around the table, chatting and catching up."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "Someone texted that he was on the way."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "When Jake arrived, everyone clapped."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text CHATTING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "They joked that his new wife would expect him home soon."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text DEALING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The gang last played cards about four months ago."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_E01_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Finally, the gang was back together again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "It had been about four months since they last played cards."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Everyone settled around the table, chatting and catching up."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "Someone said no texting at the table."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "Nick shuffled the cards and dealt them."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text CHATTING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "They joked that his new wife would expect him home soon."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text DEALING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The gang last played cards about four months ago."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_E01_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Finally, the gang was back together again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "It had been about four months since they last played cards."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Everyone settled around the table, chatting and catching up."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "Someone said no texting at the table."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "When Jake arrived, everyone clapped."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text CHATTING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "They joked that his new wife would expect him home soon."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text DEALING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The gang last played cards about four months ago."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_E02_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Maggie and Michael were settling in for the night."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "They were about to watch a movie."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Michael had just made some popcorn."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "Maggie said they should wait for her coworker to swing<br/>by before they started."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "Carli was knocking at the door."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SETTLING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "It was a modern take on film noir."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text POPPING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Maggie and Michael were about to play a game."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_E02_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Maggie and Michael were settling in for the night."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "They were about to watch a movie."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Michael had just made some popcorn."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "Maggie said they should wait for her coworker to swing<br/>by before they started."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "Carli was knocking at the door."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SETTLING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "She was here to pick up the laptop she left in Maggie’s car."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text POPPING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Maggie and Michael were about to play a game."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_E02_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Maggie and Michael were settling in for the night."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "They were about to watch a movie."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Michael had just made some popcorn."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "Maggie said they should wait and change into their pajamas<br/>before they started."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "The movie had won awards."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SETTLING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "It was a modern take on film noir."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text POPPING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Maggie and Michael were about to play a game."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_E02_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Maggie and Michael were settling in for the night."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "They were about to watch a movie."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Michael had just made some popcorn."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "Maggie said they should wait and change into their pajamas<br/>before they started."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "The movie had won awards."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SETTLING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "She was here to pick up the laptop she left in Maggie’s car."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text POPPING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Maggie and Michael were about to play a game."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_E03_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Philip was excited to be back in the United States."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "He was waiting outside of his favorite bar."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it had been almost four years since his last visit."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "He saw a familiar shape approaching."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "Philip thought about his old friends and chuckled."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text WAITING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "They were going to visit some of their regular haunts."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Philip had gone to school in the U.S."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	run task_trial

define loop passage_E03_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Philip was excited to be back in the United States."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "He was waiting outside of his favorite bar."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it had been almost four years since his last visit."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "He saw a familiar shape approaching."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "When Philip reached out his hand, Andrew hugged him."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text WAITING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "They were going to visit some of their regular haunts."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Philip had gone to school in the U.S."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	run task_trial

define loop passage_E03_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Philip was excited to be back in the United States."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "He was waiting outside of his favorite bar."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it had been almost four years since his last visit."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "He saw a familiar landscape outside."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "Philip thought about his old friends and chuckled."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text WAITING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "They were going to visit some of their regular haunts."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Philip had gone to school in the U.S."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	run task_trial

define loop passage_E03_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Philip was excited to be back in the United States."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "He was waiting outside of his favorite bar."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it had been almost four years since his last visit."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "He saw a familiar landscape outside."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "When Philip reached out his hand, Andrew hugged him."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text WAITING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "They were going to visit some of their regular haunts."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Philip had gone to school in the U.S."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	run task_trial

define loop passage_E04_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Christina had left work early and was decorating for the party."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She thought maybe she hadn’t left early enough."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "The guest of honor would arrive any minute."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "Dylan came barreling through the door."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 0
	setcycle 4 line_text DECORATING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 5
	setcycle 5 line_text "She took the cake out of the oven to cool."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 0
	setcycle 6 line_text WRAPPING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 6
	setcycle 7 line_text "It would need to cool before she could decorate it."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Christina left school early."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_E04_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Christina had left work early and was decorating for the party."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She thought maybe she hadn’t left early enough."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "The guest of honor would arrive any minute."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "Dylan came barreling through the door."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 0
	setcycle 4 line_text DECORATING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 5
	setcycle 5 line_text "He was very excited for his birthday."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 0
	setcycle 6 line_text WRAPPING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 6
	setcycle 7 line_text "It was all he had thought about all day."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Christina left school early."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_E04_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Christina had left work early and was decorating for the party."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She thought maybe she hadn’t left early enough."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "The birthday cake would be done any minute."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She wondered if she had enough ice."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 0
	setcycle 4 line_text DECORATING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 5
	setcycle 5 line_text "She took the cake out of the oven to cool."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 0
	setcycle 6 line_text WRAPPING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 6
	setcycle 7 line_text "It would need to cool before she could decorate it."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Christina left school early."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_E04_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Christina had left work early and was decorating for the party."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She thought maybe she hadn’t left early enough."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "The birthday cake would be done any minute."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She wondered if she had enough ice."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 0
	setcycle 4 line_text DECORATING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 5
	setcycle 5 line_text "He was very excited for his birthday."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 0
	setcycle 6 line_text WRAPPING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 6
	setcycle 7 line_text "It was all he had thought about all day."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Christina left school early."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_E05_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "George was eating dinner with his wife, Lucille."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text COMPLAINING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "They sat in silence picking at their food."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "Things had been tense between them lately."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "This was thanks, in no small part, to his lazy brother <br/>hanging around."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "The doorbell rang, and there stood Oscar, George’s brother."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "George sipped his tea."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "It was going to be a long dinner."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Things had been tense between George and Lucille."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_E05_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "George was eating dinner with his wife, Lucille."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text COMPLAINING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "They sat in silence picking at their food."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "Things had been tense between them lately."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "This was thanks, in no small part, to his lazy brother <br/>hanging around."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "The doorbell rang, and there stood Oscar, George’s brother."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "He had probably timed his arrival in hopes of a free meal."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "It was going to be a long dinner."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Things had been tense between George and Lucille."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_E05_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "George was eating dinner with his wife, Lucille."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text COMPLAINING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "They sat in silence picking at their food."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "Things had been tense between them lately."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "This was thanks, in no small part, to the family’s  <br/>financial troubles."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "The telephone rang, but they chose to ignore it."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "George sipped his tea."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "It was going to be a long dinner."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Things had been tense between George and Lucille."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_E05_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "George was eating dinner with his wife, Lucille."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text COMPLAINING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "They sat in silence picking at their food."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "Things had been tense between them lately."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "This was thanks, in no small part, to the family’s <br/> financial troubles."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "The telephone rang, but they chose to ignore it."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "He had probably timed his arrival in hopes of a free meal."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "It was going to be a long dinner."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Things had been tense between George and Lucille."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_E06_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Rita sat down on the bench to eat some chocolate pudding."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "She had been looking forward to it all day."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "It wouldn’t be long before he arrived."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "Her Uncle Trevor asked her if she had been eating anything."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 0
	setcycle 4 line_text LOOKING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "When she finished, she tossed the bowl in the dishwasher."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SMILING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "She contemplated having seconds."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rita was eating vanilla pudding."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_E06_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Rita sat down on the bench to eat some chocolate pudding."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "She had been looking forward to it all day."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "It wouldn’t be long before he arrived."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "Her Uncle Trevor asked her if she had been eating anything."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 0
	setcycle 4 line_text LOOKING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "She looked at him as innocently as possible and said no."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SMILING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "He could see some of the pudding smeared on her face."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rita was eating vanilla pudding."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_E06_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Rita sat down on the bench to eat some chocolate pudding."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "She had been looking forward to it all day."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "It wouldn’t be long before it was gone."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "She thought it was probably the best pudding she’d ever tasted."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 0
	setcycle 4 line_text LOOKING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "When she finished, she tossed the bowl in the dishwasher."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SMILING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "She contemplated having seconds."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rita was eating vanilla pudding."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_E06_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Rita sat down on the bench to eat some chocolate pudding."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "She had been looking forward to it all day."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "It wouldn’t be long before it was gone."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "She thought it was probably the best pudding she’d ever tasted."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 0
	setcycle 4 line_text LOOKING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "She looked at him as innocently as possible and said no."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SMILING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "He could see some of the pudding smeared on her face."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rita was eating vanilla pudding."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_E07_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Barry was reading the brief he had just received."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "This was his first big case and could really help his career."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "Unfortunately, he didn’t know very much about patent law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He needed the help of an expert and knew exactly whom <br/>to call."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "His old roommate, Bob, answered Barry’s call."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text READING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "If he could win this case, he’d be on the fast track for a partnership."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text FILING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "This thought motivated him even more."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>The case dealt with securities fraud."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_E07_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Barry was reading the brief he had just received."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "This was his first big case and could really help his career."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "Unfortunately, he didn’t know very much about patent law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He needed the help of an expert and knew exactly whom  <br/>to call."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "His old roommate, Bob, answered Barry’s call."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text READING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "Bob was happy to help."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text FILING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "Soon, the old roommates were discussing the details of the case."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>The case dealt with securities fraud."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_E07_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Barry was reading the brief he had just received."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "This was his first big case and could really help his career."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "Unfortunately, he didn’t know very much about patent law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He needed help with the case and tried to think of  <br/>how he could get it."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "He remembered some relevant case law."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text READING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "If he could win this case, he’d be on the fast track for a partnership."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text FILING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "This thought motivated him even more."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>The case dealt with securities fraud."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_E07_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Barry was reading the brief he had just received."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "This was his first big case and could really help his career."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "Unfortunately, he didn’t know very much about patent law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He needed help with the case and tried to think of  <br/>how he could get it."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "He remembered some relevant case law."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text READING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "Bob was happy to help."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text FILING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "Soon, the old roommates were discussing the details  <br/>of the case."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Entity
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>The case dealt with securities fraud."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Entity
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_E08_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Meghan took a sip of her coffee and stared at the road."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text HEARING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She had been watching traffic for about ten minutes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She was there early because she didn’t want her companion  <br/>to wait."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "Kathy arrived on time, as usual."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 0
	setcycle 5 line_text WATCHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 5
	setcycle 6 line_text "Meghan took another sip and smiled slightly."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Meghan was drinking tea."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	run task_trial

define loop passage_E08_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Meghan took a sip of her coffee and stared at the road."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text HEARING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She had been watching traffic for about ten minutes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She was there early because she didn’t want her companion  <br/>to wait."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "Kathy arrived on time, as usual."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 0
	setcycle 5 line_text WATCHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 5
	setcycle 6 line_text "It would be nice to catch up."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Meghan was drinking tea."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	run task_trial

define loop passage_E08_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Meghan took a sip of her coffee and stared at the road."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text HEARING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She had been watching traffic for about ten minutes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She was there early because she wanted to get a jump  <br/>on the day."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "The flow of traffic was hypnotic."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 0
	setcycle 5 line_text WATCHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 5
	setcycle 6 line_text "Meghan took another sip and smiled slightly."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Meghan was drinking tea."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	run task_trial

define loop passage_E08_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Meghan took a sip of her coffee and stared at the road."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Entity
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text HEARING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Entity
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She had been watching traffic for about ten minutes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Entity
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She was there early because she wanted to get a jump  <br/>on the day."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Entity
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "The flow of traffic was hypnotic."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Entity
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 0
	setcycle 5 line_text WATCHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Entity
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 5
	setcycle 6 line_text "It would be nice to catch up."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Entity
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Meghan was drinking tea."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Entity
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	run task_trial

define loop passage_F01
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Alexis stared at her computer with a look of extreme focus."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "She was working hard on her latest article, and her editor <br/>wanted to see a draft."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 1
	setcycle 2 line 0
	setcycle 2 line_text BLINKING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 1
	setcycle 3 line 3
	setcycle 3 line_text "Soon, one of her interns would ask her for a coffee order."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 1
	setcycle 4 line 4
	setcycle 4 line_text "She couldn’t wait for a jolt of caffeine."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text SIPPING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response j
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 1
	setcycle 6 line 5
	setcycle 6 line_text "The final paragraph of her piece was giving her some trouble."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 1
	setcycle 7 line 6
	setcycle 7 line_text "Luckily, the intern was here."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Alexis was writing a book."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	run task_trial

define loop passage_F02
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Jude was learning to play the harmonica."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "He’d gotten pretty good in just a couple of weeks."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Sometimes he worried about bothering his neighbors, though."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "He lived in an apartment complex, and the walls were pretty thin."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "He decided that he wouldn’t let it bother him today."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text IRRITATING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response j
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "The lure of the harmonica was too sweet to resist."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text PRACTICING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Jude lived in an apartment."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	run task_trial

define loop passage_F03
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Abigail was hungry again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "It had been almost three hours since the last time she had eaten."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "She couldn’t wait to get some more food."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "She also noticed an uncomfortable wetness on her leg."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 3
	setcycle 4 line 0
	setcycle 4 line_text SMILING
	setcycle 4 probe y
	setcycle 4 probe_type f
	setcycle 4 correct_response j
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 3
	setcycle 5 line 5
	setcycle 5 line_text "A diaper change was in order."
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "She began to cry."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text WAILING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Abigail’s diaper was dry."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	run task_trial

define loop passage_F04
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Windy was having a pleasant day at the beach."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "The sun was bright and warm, and it wasn’t too crowded."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 4
	setcycle 2 line 0
	setcycle 2 line_text WADING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 4
	setcycle 3 line 3
	setcycle 3 line_text "She applied some more sunscreen."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 4
	setcycle 4 line 4
	setcycle 4 line_text "You can’t be too careful, she thought."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TANNING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response j
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 4
	setcycle 6 line 5
	setcycle 6 line_text "She adjusted her towel and thought about reading her book some more."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 4
	setcycle 7 line 6
	setcycle 7 line_text "Instead, she stared at the beachgoers and daydreamed."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Windy was at an amusement park."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	run task_trial

define loop passage_F05
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Roger sat down to watch the basketball game."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting all week for this matchup."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "His alma mater was playing one of their chief rivals."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "Soon the room was filled with the sounds of squeaking <br/>shoes and the buzzer."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Roger snacked on some pretzels and yelled at the tv."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 5
	setcycle 5 line 0
	setcycle 5 line_text CURSING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response j
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 5
	setcycle 6 line 6
	setcycle 6 line_text "It seemed like the refs were working for the other team."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 5
	setcycle 7 line 7
	setcycle 7 line_text "Eventually, the good guys took the lead and held on to win."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 5
	setcycle 8 line 0
	setcycle 8 line_text DRIBBLING
	setcycle 8 probe y
	setcycle 8 probe_type f
	setcycle 8 correct_response j
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Roger snacked on pretzels."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Filler
	setcycle 9 Foreshadow f
	setcycle 9 Shift f
	run task_trial

define loop passage_F06
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Byron walked out of the salty air into the relative cool of the bridge."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "It had been two months since he’d been on the yacht."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "He couldn’t have asked for a better day than today."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "The skies were clear, and the water was calm and smooth."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 6
	setcycle 4 line 0
	setcycle 4 line_text NAVIGATING
	setcycle 4 probe y
	setcycle 4 probe_type f
	setcycle 4 correct_response j
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "He looked again at the map to plot his course"
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SAILING
	setcycle 6 probe y
	setcycle 6 probe_type f
	setcycle 6 correct_response j
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "He found a route that would take the better part of a day to navigate."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Byron had not been on the yacht for two months."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	run task_trial

define loop passage_F07
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Marta opened another bottle of wine."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "This made four so far for the night."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "Her guests were applauding when they heard the cork pop."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "She laughed as she poured each of them a healthy portion."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "The night was still young, and everyone was having a good time."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text EATING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response j
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "Marta generally didn’t enjoy hosting, but this time was an exception."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text SERVING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "Maybe a copious amount of wine is the key she thought."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>They were on their fifth bottle of wine."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Filler
	setcycle 9 Foreshadow f
	setcycle 9 Shift f
	run task_trial

define loop passage_F08
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Hannah closed the book and rubbed her eyes."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Filler
	setcycle 0 Foreshadow f
	setcycle 0 Shift f
	setcycle 1 passage 8
	setcycle 1 line 2
	setcycle 1 line_text "It was pretty late, but she was almost finished reading."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Filler
	setcycle 1 Foreshadow f
	setcycle 1 Shift f
	setcycle 2 passage 8
	setcycle 2 line 3
	setcycle 2 line_text "There were only a couple more chapters."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Filler
	setcycle 2 Foreshadow f
	setcycle 2 Shift f
	setcycle 3 passage 8
	setcycle 3 line 4
	setcycle 3 line_text "The story was reaching its climax."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Filler
	setcycle 3 Foreshadow f
	setcycle 3 Shift f
	setcycle 4 passage 8
	setcycle 4 line 0
	setcycle 4 line_text TALKING
	setcycle 4 probe y
	setcycle 4 probe_type f
	setcycle 4 correct_response j
	setcycle 4 Dimension Filler
	setcycle 4 Foreshadow f
	setcycle 4 Shift f
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Hannah really liked the book’s main characters."
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Filler
	setcycle 5 Foreshadow f
	setcycle 5 Shift f
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "She knew that her time with them was almost over."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Filler
	setcycle 6 Foreshadow f
	setcycle 6 Shift f
	setcycle 7 passage 8
	setcycle 7 line 7
	setcycle 7 line_text "The realization made her feel a bit sad."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Filler
	setcycle 7 Foreshadow f
	setcycle 7 Shift f
	setcycle 8 passage 8
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Hannah had only a couple more chapters to read."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Filler
	setcycle 8 Foreshadow f
	setcycle 8 Shift f
	run task_trial

define loop passage_G01_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Mike was finally driving to the concert."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for months to see The Decemberists."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "He turned the car’s stereo up and smiled at his date."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "They were starting to get a little hungry."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "He double-checked that he still had the tickets."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text DRIVING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He couldn’t wait for the show to begin."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text SINGING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Mike was going to see The Wallflowers."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_G01_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Mike was finally driving to the concert."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for months to see The Decemberists."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "He turned the car’s stereo up and smiled at his date."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "They were starting to get a little hungry."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "They decided to stop for a bite to eat."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text DRIVING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He couldn’t wait for the show to begin."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text SINGING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Mike was going to see The Wallflowers."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_G01_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Mike was finally driving to the concert."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for months to see The Decemberists."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "He turned the car’s stereo up and smiled at his date."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "They were starting to feel the excitement."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "He double-checked that he still had the tickets."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text DRIVING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He couldn’t wait for the show to begin."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text SINGING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Mike was going to see The Wallflowers."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_G01_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Mike was finally driving to the concert."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for months to see The Decemberists."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "He turned the car’s stereo up and smiled at his date."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "They were starting to feel the excitement."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "They decided to stop for a bite to eat."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text DRIVING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He couldn’t wait for the show to begin."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text SINGING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Mike was going to see The Wallflowers."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_G02_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Kathryn craned her head to hear the music."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "She was sitting in a loud coffee shop, and she couldn’t <br/>quite make out the song."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Her energy was flagging."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She wished that it were just a bit quieter."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 0
	setcycle 4 line_text SITTING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "She could finally hear a bit of the song."
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "She made a mental note to listen to that album when she got home."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Kathryn was in a coffee shop."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	run task_trial

define loop passage_G02_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Kathryn craned her head to hear the music."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "She was sitting in a loud coffee shop, and she couldn’t <br/>quite make out the song."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "Her energy was flagging."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She decided to order an espresso."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 0
	setcycle 4 line_text SITTING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "She could finally hear a bit of the song."
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "She made a mental note to listen to that album when she got home."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Kathryn was in a coffee shop."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	run task_trial

define loop passage_G02_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Kathryn craned her head to hear the music."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "She was sitting in a loud coffee shop, and she couldn’t <br/>quite make out the song."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "The patrons were all talking."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She wished that it were just a bit quieter."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 0
	setcycle 4 line_text SITTING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "She could finally hear a bit of the song."
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "She made a mental note to listen to that album when she got home."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Kathryn was in a coffee shop."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	run task_trial

define loop passage_G02_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Kathryn craned her head to hear the music."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "She was sitting in a loud coffee shop, and she couldn’t <br/>quite make out the song."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "The patrons were all talking."
	setcycle 2 probe n
	setcycle 2 probe_type s
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She decided to order an espresso."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 0
	setcycle 4 line_text SITTING
	setcycle 4 probe y
	setcycle 4 probe_type v
	setcycle 4 correct_response f
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "She could finally hear a bit of the song."
	setcycle 5 probe n
	setcycle 5 probe_type n
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "She made a mental note to listen to that album when she got home."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Kathryn was in a coffee shop."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	run task_trial

define loop passage_G03_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Rachel sighed and put her suitcase on her bed."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "She really hated packing, especially for a funeral."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it was only a couple of days away, and she couldn’t wait any longer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "She was feeling pretty grimy."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "She wanted to take a shower."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text PACKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "She sighed again and packed some more."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text CRYING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rachel was going to a funeral."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_G03_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Rachel sighed and put her suitcase on her bed."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "She really hated packing, especially for a funeral."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it was only a couple of days away, and she couldn’t wait any longer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "She was feeling pretty grimy."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "She wanted to take a shower."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text PACKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "Traveling was unpleasant enough without feeling dirty."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text CRYING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rachel was going to a funeral."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_G03_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Rachel sighed and put her suitcase on her bed."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "She really hated packing, especially for a funeral."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it was only a couple of days away, and she couldn’t wait any longer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "She packed a black dress and a veil."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "She thought about her great uncle."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text PACKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "She sighed again and packed some more."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text CRYING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rachel was going to a funeral."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_G03_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Rachel sighed and put her suitcase on her bed."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "She really hated packing, especially for a funeral."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "But it was only a couple of days away, and she couldn’t wait any longer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "She packed a black dress and a veil."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "She thought about her great uncle."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text PACKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "Traveling was unpleasant enough without feeling dirty."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text CRYING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Rachel was going to a funeral."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_G04_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Eric was staying late typing a report."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "His cubicle was filled with the files he needed to finish the project."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "It was a little overwhelming."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "He was trying to make dinner plans with a girl he had been dating."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "Eric tried to ignore distractions and focus on his work."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TYPING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "He figured he’d be able to get a few more things done that night online."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text THINKING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Eric worked in a cubicle."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_G04_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Eric was staying late typing a report."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "His cubicle was filled with the files he needed to finish the project."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "It was a little overwhelming."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "He was trying to make dinner plans with a girl he had been dating."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "Eric decided to go to his favorite pizza place."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TYPING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "He figured he’d be able to get a few more things done that night online."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text THINKING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Eric worked in a cubicle."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_G04_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Eric was staying late typing a report."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "His cubicle was filled with the files he needed to finish the project."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "It was a little overwhelming."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "His manager was trying to get the staff to put in extra work."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "Eric tried to ignore distractions and focus on his work."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TYPING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "He figured he’d be able to get a few more things done that night online."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text THINKING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Eric worked in a cubicle."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_G04_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Eric was staying late typing a report."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "His cubicle was filled with the files he needed to finish the project."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "It was a little overwhelming."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "His manager was trying to get the staff to put in extra work."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "Eric decided to go to his favorite pizza place."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TYPING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "He figured he’d be able to get a few more things done that night online."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text THINKING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Eric worked in a cubicle."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_G05_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Linda was working on a new design for a company logo on her laptop."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text DRAWING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "She was trying to find the perfect color for the text."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "The software had almost too many choices."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "She noticed her battery was getting low."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "Linda was quite proud of her new design."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text TRYING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "Her work should be saved automatically."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "But she wasn’t going to take any chances."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Linda was trying to choose a font."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_G05_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Linda was working on a new design for a company logo on her laptop."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text DRAWING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "She was trying to find the perfect color for the text."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "The software had almost too many choices."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "She noticed her battery was getting low."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "Linda decided to find an outlet."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text TRYING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "Her work should be saved automatically."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "But she wasn’t going to take any chances."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Linda was trying to choose a font."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_G05_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Linda was working on a new design for a company logo on her laptop."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text DRAWING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "She was trying to find the perfect color for the text."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "The software had almost too many choices."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "She noticed another option for the hue."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "Linda was quite proud of her new design."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text TRYING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "Her work should be saved automatically."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "But she wasn’t going to take any chances."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Linda was trying to choose a font."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_G05_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Linda was working on a new design for a company logo on her laptop."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 0
	setcycle 1 line_text DRAWING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 2
	setcycle 2 line_text "She was trying to find the perfect color for the text."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 3
	setcycle 3 line_text "The software had almost too many choices."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 4
	setcycle 4 line_text "She noticed another option for the hue."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 5
	setcycle 5 line_text "Linda decided to find an outlet."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text TRYING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 6
	setcycle 7 line_text "Her work should be saved automatically."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 7
	setcycle 8 line_text "But she wasn’t going to take any chances."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Linda was trying to choose a font."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_G06_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Nicole was busy answering the phone and transferring calls."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "It had been non-stop since she’d arrived at nine this morning."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "All she wanted to do was take a break and get some coffee."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "She realized that she hadn’t eaten breakfast that morning."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "She answered yet another call from an angry client."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text ANSWERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Hopefully the afternoon wouldn’t be as busy."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text QUITTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Nicole arrived at eight that morning."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_G06_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Nicole was busy answering the phone and transferring calls."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "It had been non-stop since she’d arrived at nine this morning."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "All she wanted to do was take a break and get some coffee."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "She realized that she hadn’t eaten breakfast that morning."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "She decided to get a snack from the vending machine."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text ANSWERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Hopefully the afternoon wouldn’t be as busy."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text QUITTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Nicole arrived at eight that morning."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_G06_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Nicole was busy answering the phone and transferring calls."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "It had been non-stop since she’d arrived at nine this morning."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "All she wanted to do was take a break and get some coffee."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "She realized that someone had been on hold for five minutes."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "She answered yet another call from an angry client."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text ANSWERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Hopefully the afternoon wouldn’t be as busy."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text QUITTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Nicole arrived at eight that morning."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_G06_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Nicole was busy answering the phone and transferring calls."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "It had been non-stop since she’d arrived at nine this morning."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "All she wanted to do was take a break and get some coffee."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "She realized that someone had been on hold for five minutes."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "She decided to get a snack from the vending machine."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text ANSWERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Hopefully the afternoon wouldn’t be as busy."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text QUITTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Nicole arrived at eight that morning."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_G07_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 0 correct_response space
	setcycle 0 line 1
	setcycle 0 line_text "Cameron removed his safety glasses and wiped the sweat from his brow."
	setcycle 0 passage 7
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 1 correct_response j
	setcycle 1 line 0
	setcycle 1 line_text WIPING
	setcycle 1 passage 7
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 2 correct_response space
	setcycle 2 line 2
	setcycle 2 line_text "He’d been sanding the legs of the table he was making for a while."
	setcycle 2 passage 7
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 3 correct_response space
	setcycle 3 line 3
	setcycle 3 line_text "Now they were almost done."
	setcycle 3 passage 7
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 4 correct_response space
	setcycle 4 line 4
	setcycle 4 line_text "Woodworking was still fairly new to him, but he was learning quickly."
	setcycle 4 passage 7
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 5 correct_response space
	setcycle 5 line 5
	setcycle 5 line_text "Cameron thought about what he needed to do to finish the table."
	setcycle 5 passage 7
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 6 correct_response space
	setcycle 6 line 6
	setcycle 6 line_text "He thought about the shade of stain he had picked out."
	setcycle 6 passage 7
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 7 correct_response f
	setcycle 7 line 0
	setcycle 7 line_text SANDING
	setcycle 7 passage 7
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 8 correct_response space
	setcycle 8 line 7
	setcycle 8 line_text "He was happy about his decision."
	setcycle 8 passage 7
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	setcycle 9 correct_response j
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Cameron was sanding the top of the table."
	setcycle 9 passage 7
	setcycle 9 probe y
	setcycle 9 probe_type q
	run task_trial

define loop passage_G07_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Cameron removed his safety glasses and wiped the sweat from his brow."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 0
	setcycle 1 line_text WIPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 2
	setcycle 2 line_text "He’d been sanding the legs of the table he was making for a while."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 3
	setcycle 3 line_text "Now they were almost done."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 4
	setcycle 4 line_text "Woodworking was still fairly new to him, but he was learning quickly."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 5
	setcycle 5 line_text "Cameron thought about what he needed to do to finish the table."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "He decided to stain the table’s aprons."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text SANDING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "He was happy about his decision."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Cameron was sanding the top of the table."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_G07_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Cameron removed his safety glasses and wiped the sweat from his brow."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 0
	setcycle 1 line_text WIPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 2
	setcycle 2 line_text "He’d been sanding the legs of the table he was making for a while."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 3
	setcycle 3 line_text "Now they were almost done."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 4
	setcycle 4 line_text "Woodworking was still fairly new to him, but he was learning quickly."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 5
	setcycle 5 line_text "Cameron paused to appreciate his handiwork and was pleased with it."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "He thought about the shade of stain he had picked out."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text SANDING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "He was happy about his decision."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Cameron was sanding the top of the table."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_G07_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Cameron removed his safety glasses and wiped the sweat from his brow."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 0
	setcycle 1 line_text WIPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 2
	setcycle 2 line_text "He’d been sanding the legs of the table he was making for a while."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 3
	setcycle 3 line_text "Now they were almost done."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 4
	setcycle 4 line_text "Woodworking was still fairly new to him, but he was learning quickly."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 5
	setcycle 5 line_text "Cameron paused to appreciate his handiwork and was pleased with it."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "He decided to stain the table’s aprons."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text SANDING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 7
	setcycle 8 line_text "He was happy about his decision."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Cameron was sanding the top of the table."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Goal
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_G08_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Julie furrowed her brow and stared at the game board."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SCORING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She was choosing her next move."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She wanted to avoid allowing her opponent to play <br/>on the triple-word square."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "She glanced at the score and saw she was trailing."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Julie decided to maximize her score on this play."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 0
	setcycle 6 line_text CHOOSING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 6
	setcycle 7 line_text "Her indecision was getting the better of her."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 8
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Julie was trying to avoid opening a double-word square."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_G08_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Julie furrowed her brow and stared at the game board."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SCORING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She was choosing her next move."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She wanted to avoid allowing her opponent to play <br/>on the triple-word square."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "She glanced at the score and saw she was trailing."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Julie decided to maximize her score on this play."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 0
	setcycle 6 line_text CHOOSING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 6
	setcycle 7 line_text "It was a gamble that she hoped would pay off."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 8
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Julie was trying to avoid opening a double-word square."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_G08_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Julie furrowed her brow and stared at the game board."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SCORING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She was choosing her next move."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She wanted to avoid allowing her opponent to play <br/>on the triple-word square."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "She glanced at her tiles, but they were still the same."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Julie was taking a long time to make her move."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 0
	setcycle 6 line_text CHOOSING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 6
	setcycle 7 line_text "Her indecision was getting the better of her."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 8
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Julie was trying to avoid opening a double-word square."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_G08_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Julie furrowed her brow and stared at the game board."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Goal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SCORING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Goal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "She was choosing her next move."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Goal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "She wanted to avoid allowing her opponent to play <br/>on the triple-word square."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Goal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "She glanced at her tiles, but they were still the same."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Goal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Julie was taking a long time to make her move."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Goal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 0
	setcycle 6 line_text CHOOSING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Goal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 6
	setcycle 7 line_text "It was a gamble that she hoped would pay off."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Goal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 8
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Julie was trying to avoid opening a double-word square."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Goal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_S01_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Oliver had been busy washing his clothes all day."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He was almost finished with his final load."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Folding sheets was always a struggle."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "He realized he was almost out of fabric softener."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "When he looked in his linen closet, it was completely full."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text WASHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He’d have to come back tomorrow."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text IRONING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Oliver was busy with laundry."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_S01_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Oliver had been busy washing his clothes all day."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He was almost finished with his final load."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Folding sheets was always a struggle."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "He realized that he had forgotten to pick up a book."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "When he arrived at the library, it was completely dark."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text WASHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He’d have to come back tomorrow."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text IRONING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Oliver was busy with laundry."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_S01_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Oliver had been busy washing his clothes all day."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He was almost finished with his final load."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Folding sheets was always a struggle."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "He realized he was almost out of fabric softener."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "When he looked in his linen closet, it was completely full."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text WASHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "This gave him some satisfaction."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text IRONING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Oliver was busy with laundry."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_S01_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Oliver had been busy washing his clothes all day."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "He was almost finished with his final load."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "Folding sheets was always a struggle."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "He realized he was almost out of fabric softener."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "When he looked in his linen closet, it was completely full."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text WASHING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "He’d have to come back tomorrow."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text IRONING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Oliver was busy with laundry."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_S02_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Alice was locked out of her house – again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "This was the third time in the past month."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 0
	setcycle 2 line_text LAUGHING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 3
	setcycle 3 line_text "She was thinking she really should hide a key somewhere <br/>for such occasions."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 4
	setcycle 4 line_text "She’d have to go to her friend’s house to pick up a spare."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "Alice stopped in front of her friend’s house."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 0
	setcycle 6 line_text THINKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 6
	setcycle 7 line_text "She couldn’t believe how careless she had been recently."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Alice had been locked out of her house three times over the past month."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_S02_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Alice was locked out of her house – again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "This was the third time in the past month."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 0
	setcycle 2 line_text LAUGHING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 3
	setcycle 3 line_text "She was thinking she really should hide a key somewhere <br/>for such occasions."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 4
	setcycle 4 line_text "She’d have to go to her friend’s house to pick up a spare."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "Alice stopped in front of her friend’s house."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 0
	setcycle 6 line_text THINKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 6
	setcycle 7 line_text "Her friend was standing on the porch with the key and a smirk."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Alice had been locked out of her house three times over the past month."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_S02_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Alice was locked out of her house – again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "This was the third time in the past month."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 0
	setcycle 2 line_text LAUGHING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 3
	setcycle 3 line_text "She was thinking she really should hide a key somewhere <br/>for such occasions."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 4
	setcycle 4 line_text "She’d have to find a good spot where she could hide the spare."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "Alice was really mad at herself."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 0
	setcycle 6 line_text THINKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 6
	setcycle 7 line_text "She couldn’t believe how careless she had been recently."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Alice had been locked out of her house three times over the past month."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_S02_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Alice was locked out of her house – again."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "This was the third time in the past month."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 0
	setcycle 2 line_text LAUGHING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 3
	setcycle 3 line_text "She was thinking she really should hide a key somewhere <br/>for such occasions."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 4
	setcycle 4 line_text "She’d have to find a good spot where she could hide the spare."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 5
	setcycle 5 line_text "Alice was really mad at herself."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 0
	setcycle 6 line_text THINKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 6
	setcycle 7 line_text "Her friend was standing on the porch with the key and a smirk."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Alice had been locked out of her house three times over the past month."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_S03_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Spencer looked down and frowned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text GRIMACING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "He was driving home and just noticed it."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Apparently, a package had been wedged between his car seats all week."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "He had to send it today to make sure it would get there in time."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 5
	setcycle 5 line_text "The package was small and was easy to overlook."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 0
	setcycle 6 line_text DRIVING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He was assured that his package would arrive by Wednesday."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 3
	setcycle 8 line 7
	setcycle 8 line_text "It was a gift for his grandmother who collected magnets."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 3
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Spencer’s package would arrive by Tuesday."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_S03_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Spencer looked down and frowned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text GRIMACING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "He was driving home and just noticed it."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Apparently, a package had been wedged between his car seats all week."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "He had to send it today to make sure it would get there in time."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 5
	setcycle 5 line_text "The line at the post office was long but moved quickly."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 0
	setcycle 6 line_text DRIVING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He was assured that his package would arrive by Wednesday."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 3
	setcycle 8 line 7
	setcycle 8 line_text "It was a gift for his grandmother who collected magnets."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 3
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Spencer’s package would arrive by Tuesday."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_S03_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Spencer looked down and frowned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text GRIMACING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "He was driving home and just noticed it."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Apparently, a package had been wedged between his car seats all week."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "He needed to be more careful about putting things on his seat."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 5
	setcycle 5 line_text "The package was small and was easy to overlook."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 0
	setcycle 6 line_text DRIVING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He was assured that his package would arrive by Wednesday."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 3
	setcycle 8 line 7
	setcycle 8 line_text "It was a gift for his grandmother who collected magnets."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 3
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Spencer’s package would arrive by Tuesday."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_S03_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Spencer looked down and frowned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text GRIMACING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "He was driving home and just noticed it."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Apparently, a package had been wedged between his car seats all week."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "He needed to be more careful about putting things on his seat."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 5
	setcycle 5 line_text "The line at the post office was long but moved quickly."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 0
	setcycle 6 line_text DRIVING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He was assured that his package would arrive by Wednesday."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 3
	setcycle 8 line 7
	setcycle 8 line_text "It was a gift for his grandmother who collected magnets."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 3
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Spencer’s package would arrive by Tuesday."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_S04_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Blaire was relaxing in the teachers’ lounge, listening to other faculty <br/>complain about the students."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "It had been a long day, and she couldn’t wait to get home."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "She rubbed her eyes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She remembered she needed to grade some tests."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "When she got to her classroom, the lights were on."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text LISTENING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She made a mental note to decrease her caffeine intake."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text GRADING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Blaire had an easy day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_S04_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Blaire was relaxing in the teachers’ lounge, listening to other faculty <br/>complain about the students."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "It had been a long day, and she couldn’t wait to get home."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "She rubbed her eyes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She remembered she needed to grade some tests."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "When she got to her classroom, the lights were on."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text LISTENING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She grabbed the tests and put them in her briefcase."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text GRADING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Blaire had an easy day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_S04_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Blaire was relaxing in the teachers’ lounge, listening to other faculty <br/>complain about the students."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "It had been a long day, and she couldn’t wait to get home."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "She rubbed her eyes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She could smell a fresh pot of coffee brewing."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "She poured herself another cup of coffee."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text LISTENING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She made a mental note to decrease her caffeine intake."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text GRADING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Blaire had an easy day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_S04_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Blaire was relaxing in the teachers’ lounge, listening to other faculty <br/>complain about the students."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "It had been a long day, and she couldn’t wait to get home."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "She rubbed her eyes."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She could smell a fresh pot of coffee brewing."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "She poured herself another cup of coffee."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text LISTENING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She grabbed the tests and put them in her briefcase."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text GRADING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 4
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Blaire had an easy day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_S05_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Jose strolled through the market putting various items in his basket."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "He was picking out items for a nice meal that evening."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "He smiled as he picked up some particularly good looking strawberries."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "They would go nicely with dessert."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Jose remembered that he needed to stop by the winery to <br/>get his favorite Shiraz"
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "At the winery, they were handing out samples of Merlot."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 7
	setcycle 7 line_text "Jose didn’t really care for them, so he headed toward <br/>the checkout."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Jose picked up raspberries for dessert."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_S05_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Jose strolled through the market putting various items <br/> in his basket."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "He was picking out items for a nice meal that evening."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "He smiled as he picked up some particularly <br/> good looking strawberries."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "They would go nicely with dessert."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Jose remembered that he needed to stop by the winery to <br/>get his favorite Shiraz."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "At the winery, they were handing out samples of Merlot."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 7
	setcycle 7 line_text "Jose didn’t really care for it, so he just bought the Shiraz."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Jose picked up raspberries for dessert."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_S05_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Jose strolled through the market putting various items in his basket."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "He was picking out items for a nice meal that evening."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "He smiled as he picked up some particularly good looking strawberries."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "They would go nicely with dessert."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Jose remembered that he needed to stop by the dairy case to <br/>get his favorite cheddar."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "He quickly browsed through the market’s small selection of <br/> white wines."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 7
	setcycle 7 line_text "Jose didn’t really care for them, so he headed toward the checkout."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Jose picked up raspberries for dessert."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_S05_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Jose strolled through the market putting various items in his basket."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "He was picking out items for a nice meal that evening."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "He smiled as he picked up some particularly good looking strawberries."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "They would go nicely with dessert."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Jose remembered that he needed to stop by the dairy case to <br/>get his favorite cheddar."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "He quickly browsed through the market’s small selection of white wines."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 0
	setcycle 6 line_text PICKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 7
	setcycle 7 line_text "Jose didn’t really care for it, so he just bought the Shiraz."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Jose picked up raspberries for dessert."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_S06_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Carl’s shuttle van had only a few more stops left."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "He was going to Florida for a little business and pleasure."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "He was talking to the other passengers to pass the time."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "He could see the control tower getting near."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "The van was crowded with other passengers."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text TALKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Carl daydreamed about warm sand and salty breezes."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Carl was in a van."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	run task_trial

define loop passage_S06_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 0 correct_response space
	setcycle 0 line 1
	setcycle 0 line_text "Carl’s shuttle van had only a few more stops left."
	setcycle 0 passage 6
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 1 correct_response space
	setcycle 1 line 2
	setcycle 1 line_text "He was going to Florida for a little business and pleasure."
	setcycle 1 passage 6
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 2 correct_response space
	setcycle 2 line 3
	setcycle 2 line_text "He was talking to the other passengers to pass the time."
	setcycle 2 passage 6
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 3 correct_response space
	setcycle 3 line 4
	setcycle 3 line_text "He could see the control tower getting near."
	setcycle 3 passage 6
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 4 correct_response space
	setcycle 4 line 5
	setcycle 4 line_text "Inside the terminal, Carl saw a long line."
	setcycle 4 passage 6
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 5 correct_response f
	setcycle 5 line 0
	setcycle 5 line_text TALKING
	setcycle 5 passage 6
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 6 correct_response space
	setcycle 6 line 6
	setcycle 6 line_text "Carl daydreamed about warm sand and salty breezes."
	setcycle 6 passage 6
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 7 correct_response f
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Carl was in a van."
	setcycle 7 passage 6
	setcycle 7 probe y
	setcycle 7 probe_type q
	run task_trial

define loop passage_S06_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Carl’s shuttle van had only a few more stops left."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "He was going to Florida for a little business and pleasure."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "He was talking to the other passengers to pass the time."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "He could see the city skyline from the freeway."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "The van was crowded with other passengers."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text TALKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Carl daydreamed about warm sand and salty breezes."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Carl was in a van."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	run task_trial

define loop passage_S06_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Carl’s shuttle van had only a few more stops left."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "He was going to Florida for a little business and pleasure."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "He was talking to the other passengers to pass the time."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "He could see the city skyline from the freeway."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "Inside the terminal, Carl saw a long line."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 0
	setcycle 5 line_text TALKING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 6
	setcycle 6 line_text "Carl daydreamed about warm sand and salty breezes."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Carl was in a van."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	run task_trial

define loop passage_S07_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Toby had been baking for the past three hours."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "The smell of baking bread soothed his nerves."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "He was working on a marble rye that he would give to his brother in law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He surveyed his remaining ingredients."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "Toby realized he needed to pick up some more yeast."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 6
	setcycle 5 line_text "He had also made a loaf of whole wheat bread with olives and rosemary."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 0
	setcycle 6 line_text BAKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 7
	setcycle 7 line_text "He made a mental list of the different breads he would <br/>bake that afternoon."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text SHOPPING
	setcycle 8 probe y
	setcycle 8 probe_type f
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Toby was working on a marble rye."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_S07_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Toby had been baking for the past three hours."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "The smell of baking bread soothed his nerves."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "He was working on a marble rye that he would give to his brother in law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He surveyed his remaining ingredients."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "Toby realized he needed to pick up some more yeast."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 6
	setcycle 5 line_text "The supermarket’s parking lot was oddly crowded for the early hour."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 0
	setcycle 6 line_text BAKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 7
	setcycle 7 line_text "He made a mental list of the different breads he would <br/>bake that afternoon."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text SHOPPING
	setcycle 8 probe y
	setcycle 8 probe_type f
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Toby was working on a marble rye."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_S07_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Toby had been baking for the past three hours."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "The smell of baking bread soothed his nerves."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "He was working on a marble rye that he would give to his brother in law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He surveyed his remaining ingredients."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "Toby realized his sourdough was finished baking."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 6
	setcycle 5 line_text "He had also made a loaf of whole wheat bread with olives and rosemary."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 0
	setcycle 6 line_text BAKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 7
	setcycle 7 line_text "He made a mental list of the different breads he would <br/>bake that afternoon."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text SHOPPING
	setcycle 8 probe y
	setcycle 8 probe_type f
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Toby was working on a marble rye."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_S07_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Toby had been baking for the past three hours."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "The smell of baking bread soothed his nerves."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "He was working on a marble rye that he would give to his brother in law."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "He surveyed his remaining ingredients."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "Toby realized his sourdough was finished baking."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 6
	setcycle 5 line_text "The supermarket’s parking lot was oddly crowded for the early hour."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 0
	setcycle 6 line_text BAKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 7
	setcycle 7 line_text "He made a mental list of the different breads he would <br/>bake that afternoon."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text SHOPPING
	setcycle 8 probe y
	setcycle 8 probe_type f
	setcycle 8 correct_response j
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 7
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Toby was working on a marble rye."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_S08_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Stan’s favorite team had finally won the pennant."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for years for this moment."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 0
	setcycle 2 line_text STANDING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "The best part was that he was there to see it happen."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "All around him in the stadium, jubilant fans were cheering."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Stan knew he should head to his hotel."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "As he celebrated the victory, Stan thought about the season."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text CHEERING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "Stan thought about getting tickets to the World Series."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Stan had been waiting for weeks to see his team win."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_S08_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Stan’s favorite team had finally won the pennant."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for years for this moment."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 0
	setcycle 2 line_text STANDING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "The best part was that he was there to see it happen."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "All around him in the stadium, jubilant fans were cheering."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Stan knew he should head to his hotel."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "As he opened the door to his room, Stan thought it seemed extra quiet."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text CHEERING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "Stan thought about getting tickets to the World Series."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Stan had been waiting for weeks to see his team win."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_S08_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Stan’s favorite team had finally won the pennant."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for years for this moment."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 0
	setcycle 2 line_text STANDING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "The best part was that he was there to see it happen."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "All around him in the stadium, jubilant fans were cheering."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Stan knew he should savor the moment."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "As he celebrated the victory, Stan thought about the season."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text CHEERING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "Stan thought about getting tickets to the World Series."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Stan had been waiting for weeks to see his team win."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_S08_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Stan’s favorite team had finally won the pennant."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Spatial
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 2
	setcycle 1 line_text "He had been waiting for years for this moment."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Spatial
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 0
	setcycle 2 line_text STANDING
	setcycle 2 probe y
	setcycle 2 probe_type f
	setcycle 2 correct_response j
	setcycle 2 Dimension Spatial
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "The best part was that he was there to see it happen."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Spatial
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "All around him in the stadium, jubilant fans were cheering."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Spatial
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "Stan knew he should savor the moment."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Spatial
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "As he opened the door to his room, Stan thought it seemed extra quiet."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Spatial
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text CHEERING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Spatial
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "Stan thought about getting tickets to the World Series."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Spatial
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Stan had been waiting for weeks to see his team win."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Spatial
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_T01_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Janie was listening to the radio."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 0
	setcycle 1 line_text DANCING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 2
	setcycle 2 line_text "She had been stressed all day and was finally unwinding."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 3
	setcycle 3 line_text "The dj was spinning some really great stuff."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 4
	setcycle 4 line_text "Unfortunately, she would have to call it a night soon."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 5
	setcycle 5 line_text "The next morning, she got up and turned on the radio."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 0
	setcycle 6 line_text UNWINDING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 6
	setcycle 7 line_text " It was loud enough to rattle her windows."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Janie had had a very relaxing day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_T01_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Janie was listening to the radio."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 0
	setcycle 1 line_text DANCING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 2
	setcycle 2 line_text "She had been stressed all day and was finally unwinding."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 3
	setcycle 3 line_text "The dj was spinning some really great stuff."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 4
	setcycle 4 line_text "Unfortunately, she would have to call it a night soon."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 5
	setcycle 5 line_text "The next morning, she got up and turned on the radio."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 0
	setcycle 6 line_text UNWINDING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 6
	setcycle 7 line_text "The morning crew was talking about traffic, so she switched it off."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Janie had had a very relaxing day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_T01_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Janie was listening to the radio."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 1
	setcycle 1 line 0
	setcycle 1 line_text DANCING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 1
	setcycle 2 line 2
	setcycle 2 line_text "She had been stressed all day and was finally unwinding."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 1
	setcycle 3 line 3
	setcycle 3 line_text "The dj was spinning some really great stuff."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 1
	setcycle 4 line 4
	setcycle 4 line_text "She really liked this song, especially the pounding bass line."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 1
	setcycle 5 line 5
	setcycle 5 line_text "She turned up the volume and adjusted the bass level."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 1
	setcycle 6 line 0
	setcycle 6 line_text UNWINDING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 1
	setcycle 7 line 6
	setcycle 7 line_text "It was loud enough to rattle her windows."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Janie had had a very relaxing day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_T01_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Janie was listening to the radio."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 1
	setcycle 1 line 0
	setcycle 1 line_text DANCING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 1
	setcycle 2 line 2
	setcycle 2 line_text "She had been stressed all day and was finally unwinding."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 1
	setcycle 3 line 3
	setcycle 3 line_text "The dj was spinning some really great stuff."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 1
	setcycle 4 line 4
	setcycle 4 line_text "She really liked this song, especially the pounding bass line."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 1
	setcycle 5 line 5
	setcycle 5 line_text "She turned up the volume and adjusted the bass level."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 1
	setcycle 6 line 0
	setcycle 6 line_text UNWINDING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 1
	setcycle 7 line 6
	setcycle 7 line_text "The morning crew was talking about traffic, so she switched it off."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Janie had had a very relaxing day."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_T02_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Katie had been working for months on her medical school applications."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "Now it was November, and the deadlines were arriving."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "She was sweating because the application process was nerve wracking."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She knew that it would take a while to hear from the schools."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "She sat down at her computer to write her boyfriend an email."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SWEATING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "Her top choice school wanted to invite her for an interview!"
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Katie was applying to medical school."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	run task_trial

define loop passage_T02_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Katie had been working for months on her medical school applications."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "Now it was November, and the deadlines were arriving."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "She was sweating because the application process was nerve wracking."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She knew that it would take a while to hear from the schools."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "Three months later, it was mid February, and she got an email."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SWEATING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "Her top choice school wanted to invite her for an interview!"
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Katie was applying to medical school."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	run task_trial

define loop passage_T02_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Katie had been working for months on her medical school applications."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "Now it was November, and the deadlines were arriving."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "She was sweating because the application process was nerve wracking."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "She knew this was going to be a big decision."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "She sat down at her computer to write her boyfriend an email."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text SWEATING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text "Her top choice school wanted to invite her for an interview!"
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Katie was applying to medical school."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	run task_trial

define loop passage_T02_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 0 correct_response space
	setcycle 0 line 1
	setcycle 0 line_text "Katie had been working for months on her medical school applications."
	setcycle 0 passage 2
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 1 correct_response space
	setcycle 1 line 2
	setcycle 1 line_text "Now it was November, and the deadlines were arriving."
	setcycle 1 passage 2
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 2 correct_response space
	setcycle 2 line 3
	setcycle 2 line_text "She was sweating because the application process was nerve wracking."
	setcycle 2 passage 2
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 3 correct_response space
	setcycle 3 line 4
	setcycle 3 line_text "She knew this was going to be a big decision."
	setcycle 3 passage 2
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 4 correct_response space
	setcycle 4 line 5
	setcycle 4 line_text "Three months later, it was mid February, and she got an email."
	setcycle 4 passage 2
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 5 correct_response f
	setcycle 5 line 0
	setcycle 5 line_text SWEATING
	setcycle 5 passage 2
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 6 correct_response space
	setcycle 6 line 6
	setcycle 6 line_text "Her top choice school wanted to invite her for an interview!"
	setcycle 6 passage 2
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 7 correct_response f
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Katie was applying to medical school."
	setcycle 7 passage 2
	setcycle 7 probe y
	setcycle 7 probe_type q
	run task_trial

define loop passage_T03_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Steve hopped on a stool near the end of the bar."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text DRINKING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "The bartender was already pouring him a pint of his favorite beer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Steve was going to spend some time watching the game."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "He glanced over his shoulder and noticed the bar was pretty empty."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text POURING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 5
	setcycle 6 line_text "He looked up at the television to check the score."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He thought about ordering another pint."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Steve sat near the end of the bar."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_T03_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Steve hopped on a stool near the end of the bar."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text DRINKING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "The bartender was already pouring him a pint of his favorite beer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Steve was going to spend some time watching the game."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "A couple of hours later, he noticed the bar was pretty empty."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text POURING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 5
	setcycle 6 line_text "He looked up at the television to check the score."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He thought about ordering another pint."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Steve sat near the end of the bar."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_T03_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Steve hopped on a stool near the end of the bar."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text DRINKING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "The bartender was already pouring him a pint of his favorite beer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Steve was going to savor the hoppy flavor."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "He glanced over his shoulder and noticed the bar was pretty empty."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text POURING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 3
	setcycle 6 line 5
	setcycle 6 line_text "He looked up at the television to check the score."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He thought about ordering another pint."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Steve sat near the end of the bar."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_T03_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Steve hopped on a stool near the end of the bar."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 3
	setcycle 1 line 0
	setcycle 1 line_text DRINKING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 3
	setcycle 2 line 2
	setcycle 2 line_text "The bartender was already pouring him a pint of his favorite beer."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 3
	setcycle 3 line 3
	setcycle 3 line_text "Steve was going to savor the hoppy flavor."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 3
	setcycle 4 line 4
	setcycle 4 line_text "A couple of hours later, he noticed the bar was pretty empty."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text POURING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 3
	setcycle 6 line 5
	setcycle 6 line_text "He looked up at the television to check the score."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 3
	setcycle 7 line 6
	setcycle 7 line_text "He thought about ordering another pint."
	setcycle 7 probe n
	setcycle 7 probe_type n
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Steve sat near the end of the bar."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_T04_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Jordan sat on the tossing breadcrumbs to the birds."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She had been at the park most of the day, people-watching."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "Now she had gathered quite the bird following."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She saw the leaves were starting to change color."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "She smiled as the birds jostled each other for some more crumbs."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TOSSING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She loved spending time at the park."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Jordan was feeding seeds to the birds."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	run task_trial

define loop passage_T04_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Jordan sat on the tossing breadcrumbs to the birds."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She had been at the park most of the day, people-watching."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "Now she had gathered quite the bird following."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She saw the leaves were starting to change color."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "Two weeks later, the birds had flown away for the winter."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TOSSING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She loved spending time at the park."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Jordan was feeding seeds to the birds."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	run task_trial

define loop passage_T04_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Jordan sat on the tossing breadcrumbs to the birds."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She had been at the park most of the day, people-watching."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "Now she had gathered quite the bird following."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She saw the breeze making ripples on the lake."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "She smiled as the birds jostled each other for some more crumbs."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TOSSING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She loved spending time at the park."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Jordan was feeding seeds to the birds."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	run task_trial

define loop passage_T04_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 8
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 4
	setcycle 0 line 1
	setcycle 0 line_text "Jordan sat on the tossing breadcrumbs to the birds."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 4
	setcycle 1 line 2
	setcycle 1 line_text "She had been at the park most of the day, people-watching."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 4
	setcycle 2 line 3
	setcycle 2 line_text "Now she had gathered quite the bird following."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 4
	setcycle 3 line 4
	setcycle 3 line_text "She saw the breeze making ripples on the lake."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 4
	setcycle 4 line 5
	setcycle 4 line_text "Two weeks later, the birds had flown away for the winter."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 4
	setcycle 5 line 0
	setcycle 5 line_text TOSSING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 4
	setcycle 6 line 6
	setcycle 6 line_text "She loved spending time at the park."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 4
	setcycle 7 line 0
	setcycle 7 line_text "Is this true?<br/>Jordan was feeding seeds to the birds."
	setcycle 7 probe y
	setcycle 7 probe_type q
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	run task_trial

define loop passage_T05_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Mitch was going to the gym for the first time."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "It was tough learning all of the new exercises."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "But he wanted to get back in shape."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "He had received some sessions with a trainer as a birthday gift."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Mitch had purchased new shoes for the occasion."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "The sessions flew by, and he loved the routine."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 7
	setcycle 6 line_text "He wondered how long it would take to see results."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 0
	setcycle 7 line_text LEARNING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 8
	setcycle 8 line_text "The gym also offered classes about nutrition."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Mitch won the sessions with the trainer in a raffle."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_T05_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Mitch was going to the gym for the first time."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "It was tough learning all of the new exercises."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "But he wanted to get back in shape."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "He had received some sessions with a trainer as a birthday gift."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Mitch had purchased new shoes for the occasion."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "The sessions flew by, and he loved the routine."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 7
	setcycle 6 line_text "Four months later, he was impressed with the results."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 0
	setcycle 7 line_text LEARNING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 8
	setcycle 8 line_text "The gym also offered classes about nutrition."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Mitch won the sessions with the trainer in a raffle."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_T05_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Mitch was going to the gym for the first time."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "It was tough learning all of the new exercises."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "But he wanted to get back in shape."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "He had received some sessions with a trainer as a birthday gift."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Mitch had purchased new shoes for the occasion."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "The gym was extremely hot and smelled of sweat."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 5
	setcycle 6 line 7
	setcycle 6 line_text "He wondered how long it would take to see results."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 5
	setcycle 7 line 0
	setcycle 7 line_text LEARNING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 5
	setcycle 8 line 8
	setcycle 8 line_text "The gym also offered classes about nutrition."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Mitch won the sessions with the trainer in a raffle."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_T05_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 5
	setcycle 0 line 1
	setcycle 0 line_text "Mitch was going to the gym for the first time."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 5
	setcycle 1 line 2
	setcycle 1 line_text "It was tough learning all of the new exercises."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 5
	setcycle 2 line 3
	setcycle 2 line_text "But he wanted to get back in shape."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 5
	setcycle 3 line 4
	setcycle 3 line_text "He had received some sessions with a trainer as a birthday gift."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 5
	setcycle 4 line 5
	setcycle 4 line_text "Mitch had purchased new shoes for the occasion."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 5
	setcycle 5 line 6
	setcycle 5 line_text "The gym was extremely hot and smelled of sweat."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 5
	setcycle 6 line 7
	setcycle 6 line_text "Four months later, he was impressed with the results."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 5
	setcycle 7 line 0
	setcycle 7 line_text LEARNING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 5
	setcycle 8 line 8
	setcycle 8 line_text "The gym also offered classes about nutrition."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 5
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Mitch won the sessions with the trainer in a raffle."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_T06_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Juan’s meeting with the boss didn’t quite go as planned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 0
	setcycle 1 line_text ARGUING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 2
	setcycle 2 line_text "He sat at his desk snacking on mixed nuts."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 3
	setcycle 3 line_text "He was going to have to finish the new designs before <br/>the next client meeting."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 4
	setcycle 4 line_text "It was going to take all night."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "The next morning, he reached for his coffee before <br/>remembering the cup was empty."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SNACKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "At least there was more in the break room."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 6
	setcycle 8 line 7
	setcycle 8 line_text "He really needed to focus on the designs."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 6
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Juan’s meeting went as he expected."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_T06_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Juan’s meeting with the boss didn’t quite go as planned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 0
	setcycle 1 line_text ARGUING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 2
	setcycle 2 line_text "He sat at his desk snacking on mixed nuts."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 3
	setcycle 3 line_text "He was going to have to finish the new designs before <br/>the next client meeting."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 4
	setcycle 4 line_text "It was going to take all night."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "The next morning, he reached for his coffee before <br/>remembering the cup was empty."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SNACKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "At least the designs were finished."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 7
	setcycle 8 line_text "He could probably get a couple of hours of sleep before the meeting."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 6
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Juan’s meeting went as he expected."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_T06_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Juan’s meeting with the boss didn’t quite go as planned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 6
	setcycle 1 line 0
	setcycle 1 line_text ARGUING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 6
	setcycle 2 line 2
	setcycle 2 line_text "He sat at his desk snacking on mixed nuts."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 6
	setcycle 3 line 3
	setcycle 3 line_text "He was going to have to finish the new designs before <br/>the next client meeting."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 6
	setcycle 4 line 4
	setcycle 4 line_text "It was a pretty tall order."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "He reached for his coffee but caught himself when <br/>he remembered that the cup was empty."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SNACKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "At least there was more in the break room."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 6
	setcycle 8 line 7
	setcycle 8 line_text "He really needed to focus on the designs."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 6
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Juan’s meeting went as he expected."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_T06_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Juan’s meeting with the boss didn’t quite go as planned."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 0
	setcycle 1 line_text ARGUING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 2
	setcycle 2 line_text "He sat at his desk snacking on mixed nuts."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 3
	setcycle 3 line_text "He was going to have to finish the new designs before <br/>the next client meeting."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 4
	setcycle 4 line_text "It was a pretty tall order."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 5
	setcycle 5 line_text "He reached for his coffee but caught himself when <br/>he remembered that the cup was empty."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 0
	setcycle 6 line_text SNACKING
	setcycle 6 probe y
	setcycle 6 probe_type v
	setcycle 6 correct_response f
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 6
	setcycle 7 line_text "At least the designs were finished."
	setcycle 7 probe n
	setcycle 7 probe_type s
	setcycle 7 correct_response space
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 7
	setcycle 8 line_text "He could probably get a couple of hours of sleep before the meeting."
	setcycle 8 probe n
	setcycle 8 probe_type s
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 6
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Juan’s meeting went as he expected."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response j
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_T07_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Stephanie sat on the examination table, shivering."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "She wondered why they always kept it so cold in here."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "With a smile, she thought maybe it was to match <br/>her doctor’s personality."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "She tried not to think about waiting for results."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "Two days later, her cellphone rang."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text SHIVERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "She grabbed it and checked for messages."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text TEXTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The examination room was cold."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	run task_trial

define loop passage_T07_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Stephanie sat on the examination table, shivering."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "She wondered why they always kept it so cold in here."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "With a smile, she thought maybe it was to match <br/>her doctor’s personality."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "She tried not to think about waiting for results."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "Two days later, her cellphone rang."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text SHIVERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "She took a deep breath and answered the phone, ready to hear her fate."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text TEXTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The examination room was cold."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run task_trial

define loop passage_T07_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Stephanie sat on the examination table, shivering."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "She wondered why they always kept it so cold in here."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "With a smile, she thought maybe it was to match <br/>her doctor’s personality."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "She couldn't wait to get out of the exam room."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "She saw her cellphone on a chair."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text SHIVERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "She grabbed it and checked for messages."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text TEXTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The examination room was cold."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	run task_trial

define loop passage_T07_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 7
	setcycle 0 line 1
	setcycle 0 line_text "Stephanie sat on the examination table, shivering."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 7
	setcycle 1 line 2
	setcycle 1 line_text "She wondered why they always kept it so cold in here."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 7
	setcycle 2 line 3
	setcycle 2 line_text "With a smile, she thought maybe it was to match <br/>her doctor’s personality."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 7
	setcycle 3 line 4
	setcycle 3 line_text "She couldn't wait to get out of the exam room."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 7
	setcycle 4 line 5
	setcycle 4 line_text "She saw her cellphone on a chair."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 7
	setcycle 5 line 0
	setcycle 5 line_text SHIVERING
	setcycle 5 probe y
	setcycle 5 probe_type v
	setcycle 5 correct_response f
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 7
	setcycle 6 line 6
	setcycle 6 line_text "She took a deep breath and answered the phone, ready to hear her fate."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 7
	setcycle 7 line 0
	setcycle 7 line_text TEXTING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 7
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The examination room was cold."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	run task_trial

define loop passage_T08_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Curling was as much art as science."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SLIPPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "At least, this is what Nigel thought while walking onto the ice."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "He had been practicing for two weeks without much improvement."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "Nigel wondered if he’d ever get the hang of it."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "He was going to spend as much of the week as he could on the ice."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "Nigel was nervous about his ability to play."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text WALKING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "He took his place in the hack and waited for the skip’s signal."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Nigel had been practicing for two weeks."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow y
	setcycle 9 Shift n
	run task_trial

define loop passage_T08_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Curling was as much art as science."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SLIPPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "At least, this is what Nigel thought while walking onto the ice."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "He had been practicing for two weeks without much improvement."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "Nigel wondered if he’d ever get the hang of it."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "He was going to spend as much of the week as he could on the ice."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "The following weekend, Nigel was nervous but ready."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text WALKING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "He took his place in the hack and waited for the skip’s signal."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Nigel had been practicing for two weeks."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow y
	setcycle 9 Shift y
	run task_trial

define loop passage_T08_NN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Curling was as much art as science."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift n
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SLIPPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift n
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "At least, this is what Nigel thought while walking onto the ice."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift n
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "He had been practicing for two weeks without much improvement."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift n
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "Nigel wondered if he’d ever get the hang of it."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift n
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "He was going to improve before the first game, he told himself."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift n
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "Nigel was nervous about his ability to play."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift n
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text WALKING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift n
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "He took his place in the hack and waited for the skip’s signal."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift n
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Nigel had been practicing for two weeks."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow n
	setcycle 9 Shift n
	run task_trial

define loop passage_T08_NS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 8
	setcycle 0 line 1
	setcycle 0 line_text "Curling was as much art as science."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow n
	setcycle 0 Shift y
	setcycle 1 passage 8
	setcycle 1 line 0
	setcycle 1 line_text SLIPPING
	setcycle 1 probe y
	setcycle 1 probe_type f
	setcycle 1 correct_response j
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow n
	setcycle 1 Shift y
	setcycle 2 passage 8
	setcycle 2 line 2
	setcycle 2 line_text "At least, this is what Nigel thought while walking onto the ice."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow n
	setcycle 2 Shift y
	setcycle 3 passage 8
	setcycle 3 line 3
	setcycle 3 line_text "He had been practicing for two weeks without much improvement."
	setcycle 3 probe n
	setcycle 3 probe_type n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow n
	setcycle 3 Shift y
	setcycle 4 passage 8
	setcycle 4 line 4
	setcycle 4 line_text "Nigel wondered if he’d ever get the hang of it."
	setcycle 4 probe n
	setcycle 4 probe_type n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow n
	setcycle 4 Shift y
	setcycle 5 passage 8
	setcycle 5 line 5
	setcycle 5 line_text "He was going to improve before the first game, he told himself."
	setcycle 5 probe n
	setcycle 5 probe_type s
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow n
	setcycle 5 Shift y
	setcycle 6 passage 8
	setcycle 6 line 6
	setcycle 6 line_text "The following weekend, Nigel was nervous but ready."
	setcycle 6 probe n
	setcycle 6 probe_type s
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow n
	setcycle 6 Shift y
	setcycle 7 passage 8
	setcycle 7 line 0
	setcycle 7 line_text WALKING
	setcycle 7 probe y
	setcycle 7 probe_type v
	setcycle 7 correct_response f
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow n
	setcycle 7 Shift y
	setcycle 8 passage 8
	setcycle 8 line 7
	setcycle 8 line_text "He took his place in the hack and waited for the skip’s signal."
	setcycle 8 probe n
	setcycle 8 probe_type n
	setcycle 8 correct_response space
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow n
	setcycle 8 Shift y
	setcycle 9 passage 8
	setcycle 9 line 0
	setcycle 9 line_text "Is this true?<br/>Nigel had been practicing for two weeks."
	setcycle 9 probe y
	setcycle 9 probe_type q
	setcycle 9 correct_response f
	setcycle 9 Dimension Temporal
	setcycle 9 Foreshadow n
	setcycle 9 Shift y
	run task_trial

define loop passage_prac01
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 1
	setcycle 0 line 1
	setcycle 0 line_text "Caitlin was typing furiously on her laptop."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 1 passage 1
	setcycle 1 line 2
	setcycle 1 line_text "The deadline for her paper was three hours away."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 2 passage 1
	setcycle 2 line 3
	setcycle 2 line_text "But now the words were finally starting to flow."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 3 passage 1
	setcycle 3 line 4
	setcycle 3 line_text "She noticed with some annoyance that she was over the page limit."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 4 passage 1
	setcycle 4 line 5
	setcycle 4 line_text "She became very irritated."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 5 passage 1
	setcycle 5 line 0
	setcycle 5 line_text TYPING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response f
	setcycle 6 passage 1
	setcycle 6 line 6
	setcycle 6 line_text "She was going to have to cut material to be under <br/>the limit  for the paper."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 7 passage 1
	setcycle 7 line 0
	setcycle 7 line_text KICKING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 8 passage 1
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>The deadline was four hours away."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	run task_trial

define loop passage_prac02
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 2
	setcycle 0 line 1
	setcycle 0 line_text "Wes stepped out into the crisp morning air for a jog."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 1 passage 2
	setcycle 1 line 2
	setcycle 1 line_text "A few miles of running before work would be a great way<br/>to start the day."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 2 passage 2
	setcycle 2 line 3
	setcycle 2 line_text "He set out along his usual route near the waterfront."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 3 passage 2
	setcycle 3 line 4
	setcycle 3 line_text "He saw dog poo in his way but couldn’t avoid it."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 4 passage 2
	setcycle 4 line 5
	setcycle 4 line_text "Suddenly, Wes began to gag."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 5 passage 2
	setcycle 5 line 0
	setcycle 5 line_text STEPPING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response f
	setcycle 6 passage 2
	setcycle 6 line 6
	setcycle 6 line_text " He thought about training for an upcoming 5K."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 7 passage 2
	setcycle 7 line 0
	setcycle 7 line_text EATING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 8 passage 2
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Wes was jogging along the waterfront."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response f
	run task_trial

define loop passage_prac03
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 3
	setcycle 0 line 1
	setcycle 0 line_text "Allan was on a hot streak bowling tonight."
	setcycle 0 probe n
	setcycle 0 probe_type n
	setcycle 0 correct_response space
	setcycle 1 passage 3
	setcycle 1 line 2
	setcycle 1 line_text "It was only the fifth frame, and he already had four strikes<br/>and a spare."
	setcycle 1 probe n
	setcycle 1 probe_type n
	setcycle 1 correct_response space
	setcycle 2 passage 3
	setcycle 2 line 3
	setcycle 2 line_text "He saw a ball from the next lane coming toward him."
	setcycle 2 probe n
	setcycle 2 probe_type n
	setcycle 2 correct_response space
	setcycle 3 passage 3
	setcycle 3 line 4
	setcycle 3 line_text "Allan began to curse and jump up and down."
	setcycle 3 probe n
	setcycle 3 probe_type s
	setcycle 3 correct_response space
	setcycle 4 passage 3
	setcycle 4 line 5
	setcycle 4 line_text "The guy next to him had slipped and rolled his ball into Allan’s ankle."
	setcycle 4 probe n
	setcycle 4 probe_type s
	setcycle 4 correct_response space
	setcycle 5 passage 3
	setcycle 5 line 0
	setcycle 5 line_text GRABING
	setcycle 5 probe y
	setcycle 5 probe_type f
	setcycle 5 correct_response j
	setcycle 6 passage 3
	setcycle 6 line 6
	setcycle 6 line_text "Allan realized the night might not be so great after all."
	setcycle 6 probe n
	setcycle 6 probe_type n
	setcycle 6 correct_response space
	setcycle 7 passage 3
	setcycle 7 line 0
	setcycle 7 line_text DRINKING
	setcycle 7 probe y
	setcycle 7 probe_type f
	setcycle 7 correct_response j
	setcycle 8 passage 3
	setcycle 8 line 0
	setcycle 8 line_text "Is this true?<br/>Allan had two strikes and two spares."
	setcycle 8 probe y
	setcycle 8 probe_type q
	setcycle 8 correct_response j
	run task_trial

define sequence post_study
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run post_study_seq always

define loop post_study_seq
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run post_study_trial

define sequence post_study_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Loading always
	run Loading_response always
	run Strange always
	run Strange_response always
	run Cookie always
	run Cookie_response always
	run Honest always
	run Honest_response always
	run Debrief always
	run Debrief_response always
	run logger always

define inline_javascript prac_counter
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.p1 = vars.prac_order[0] - vars.prac_count;
	vars.p2 = vars.prac_order[1] - vars.prac_count;
	vars.p3 = vars.prac_order[2] - vars.prac_count;
	
	vars.prac_count++;
	__end__
	set _prepare ""

define inline_javascript prac_initiate
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// shuffle(array) returns a set of random numbers:
	function shuffle(array) {
	    var i = array.length,
	        j = 0,
	        temp;
	
	    while (i--) {
	
	        j = Math.floor(Math.random() * (i+1));
	
	        // swap randomly chosen element with current element
	        temp = array[i];
	        array[i] = array[j];
	        array[j] = temp;
	
	    }
	
	    return array;
	}
	
	
	// Initiate the trial count
	vars.prac_count = 1;
	
	vars.prac_order = shuffle([2,3,4]);
	__end__
	set _prepare ""

define sequence prac_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prac_counter always
	run count_practice always
	run contiue_space always
	run passage_prac01 "[p1]=1"
	run passage_prac02 "[p2]=1"
	run passage_prac03 "[p3]=1"

define sequence prac_session
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run prac_initiate always
	run prac_trials always

define loop prac_trials
	set source table
	set repeat 10
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if "[prac_count]=4"
	setcycle 0 empty_column ""
	run prac_seq

define sketchpad practice_text
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="We are going to run three warm-up trials. <br/>You will learn read and answer questions along with the instruction." x=-450 y=-200 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="Please press SPACE BAR to continue." x=-224 y=32 z_index=0

define sketchpad start_text
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Now we will start the experiment.<br /><br />You will read 40 stories and have a break <br/>when you answered 20 questions." x=-427 y=-269 z_index=0

define sequence task_trial
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Passage_board always
	run Passage_response "[probe]=n"
	run Probe_response "[probe] = y"
	run logger always

define inline_javascript trial_assign_computing
	set description "Executes JavaScript code (ECMA 5.1)"
	set _run ""
	___prepare__
	// Assign the randomied trial sequence; Turn ON when the trial_seq reached the number 
	//vars.g08_fs = vars.ranNums[0] - vars.trial_seq;
	//vars.g08_fn = vars.ranNums[1] - vars.trial_seq;
	//vars.g08_ns = vars.ranNums[2] - vars.trial_seq;
	//vars.g08_nn = vars.ranNums[3] - vars.trial_seq;
	//vars.s04_fs = vars.ranNums[4] - vars.trial_seq;
	//vars.s04_fn = vars.ranNums[5] - vars.trial_seq;
	//vars.s04_ns = vars.ranNums[6] - vars.trial_seq;
	//vars.s04_nn = vars.ranNums[7] - vars.trial_seq;
	
	vars.e01_fs = vars.run_if[8] - vars.trial_seq;
	vars.e01_fn = vars.run_if[9] - vars.trial_seq;
	vars.e01_ns = vars.run_if[10] - vars.trial_seq;
	vars.e01_nn = vars.run_if[11] - vars.trial_seq;
	vars.e02_fs = vars.run_if[12] - vars.trial_seq;
	vars.e02_fn = vars.run_if[13] - vars.trial_seq;
	vars.e02_ns = vars.run_if[14] - vars.trial_seq;
	vars.e02_nn = vars.run_if[15] - vars.trial_seq;
	vars.e03_fs = vars.run_if[16] - vars.trial_seq;
	vars.e03_fn = vars.run_if[17] - vars.trial_seq;
	vars.e03_ns = vars.run_if[18] - vars.trial_seq;
	vars.e03_nn = vars.run_if[19] - vars.trial_seq;
	vars.e04_fs = vars.run_if[20] - vars.trial_seq;
	vars.e04_fn = vars.run_if[21] - vars.trial_seq;
	vars.e04_ns = vars.run_if[22] - vars.trial_seq;
	vars.e04_nn = vars.run_if[23] - vars.trial_seq;
	vars.e05_fs = vars.run_if[24] - vars.trial_seq;
	vars.e05_fn = vars.run_if[25] - vars.trial_seq;
	vars.e05_ns = vars.run_if[26] - vars.trial_seq;
	vars.e05_nn = vars.run_if[27] - vars.trial_seq;
	vars.e06_fs = vars.run_if[28] - vars.trial_seq;
	vars.e06_fn = vars.run_if[29] - vars.trial_seq;
	vars.e06_ns = vars.run_if[30] - vars.trial_seq;
	vars.e06_nn = vars.run_if[31] - vars.trial_seq;
	vars.e07_fs = vars.run_if[32] - vars.trial_seq;
	vars.e07_fn = vars.run_if[33] - vars.trial_seq;
	vars.e07_ns = vars.run_if[34] - vars.trial_seq;
	vars.e07_nn = vars.run_if[35] - vars.trial_seq;
	vars.e08_fs = vars.run_if[36] - vars.trial_seq;
	vars.e08_fn = vars.run_if[37] - vars.trial_seq;
	vars.e08_ns = vars.run_if[38] - vars.trial_seq;
	vars.e08_nn = vars.run_if[39] - vars.trial_seq;
	vars.g01_fs = vars.run_if[40] - vars.trial_seq;
	vars.g01_fn = vars.run_if[41] - vars.trial_seq;
	vars.g01_ns = vars.run_if[42] - vars.trial_seq;
	vars.g01_nn = vars.run_if[43] - vars.trial_seq;
	vars.g02_fs = vars.run_if[44] - vars.trial_seq;
	vars.g02_fn = vars.run_if[45] - vars.trial_seq;
	vars.g02_ns = vars.run_if[46] - vars.trial_seq;
	vars.g02_nn = vars.run_if[47] - vars.trial_seq;
	vars.g03_fs = vars.run_if[48] - vars.trial_seq;
	vars.g03_fn = vars.run_if[49] - vars.trial_seq;
	vars.g03_ns = vars.run_if[50] - vars.trial_seq;
	vars.g03_nn = vars.run_if[51] - vars.trial_seq;
	vars.g04_fs = vars.run_if[52] - vars.trial_seq;
	vars.g04_fn = vars.run_if[53] - vars.trial_seq;
	vars.g04_ns = vars.run_if[54] - vars.trial_seq;
	vars.g04_nn = vars.run_if[55] - vars.trial_seq;
	vars.g05_fs = vars.run_if[56] - vars.trial_seq;
	vars.g05_fn = vars.run_if[57] - vars.trial_seq;
	vars.g05_ns = vars.run_if[58] - vars.trial_seq;
	vars.g05_nn = vars.run_if[59] - vars.trial_seq;
	vars.g06_fs = vars.run_if[60] - vars.trial_seq;
	vars.g06_fn = vars.run_if[61] - vars.trial_seq;
	vars.g06_ns = vars.run_if[62] - vars.trial_seq;
	vars.g06_nn = vars.run_if[63] - vars.trial_seq;
	vars.g07_fs = vars.run_if[64] - vars.trial_seq;
	vars.g07_fn = vars.run_if[65] - vars.trial_seq;
	vars.g07_ns = vars.run_if[66] - vars.trial_seq;
	vars.g07_nn = vars.run_if[67] - vars.trial_seq;
	vars.g08_fs = vars.run_if[68] - vars.trial_seq;
	vars.g08_fn = vars.run_if[69] - vars.trial_seq;
	vars.g08_ns = vars.run_if[70] - vars.trial_seq;
	vars.g08_nn = vars.run_if[71] - vars.trial_seq;
	vars.s01_fs = vars.run_if[72] - vars.trial_seq;
	vars.s01_fn = vars.run_if[73] - vars.trial_seq;
	vars.s01_ns = vars.run_if[74] - vars.trial_seq;
	vars.s01_nn = vars.run_if[75] - vars.trial_seq;
	vars.s02_fs = vars.run_if[76] - vars.trial_seq;
	vars.s02_fn = vars.run_if[77] - vars.trial_seq;
	vars.s02_ns = vars.run_if[78] - vars.trial_seq;
	vars.s02_nn = vars.run_if[79] - vars.trial_seq;
	vars.s03_fs = vars.run_if[80] - vars.trial_seq;
	vars.s03_fn = vars.run_if[81] - vars.trial_seq;
	vars.s03_ns = vars.run_if[82] - vars.trial_seq;
	vars.s03_nn = vars.run_if[83] - vars.trial_seq;
	vars.s04_fs = vars.run_if[84] - vars.trial_seq;
	vars.s04_fn = vars.run_if[85] - vars.trial_seq;
	vars.s04_ns = vars.run_if[86] - vars.trial_seq;
	vars.s04_nn = vars.run_if[87] - vars.trial_seq;
	vars.s05_fs = vars.run_if[88] - vars.trial_seq;
	vars.s05_fn = vars.run_if[89] - vars.trial_seq;
	vars.s05_ns = vars.run_if[90] - vars.trial_seq;
	vars.s05_nn = vars.run_if[91] - vars.trial_seq;
	vars.s06_fs = vars.run_if[92] - vars.trial_seq;
	vars.s06_fn = vars.run_if[93] - vars.trial_seq;
	vars.s06_ns = vars.run_if[94] - vars.trial_seq;
	vars.s06_nn = vars.run_if[95] - vars.trial_seq;
	vars.s07_fs = vars.run_if[96] - vars.trial_seq;
	vars.s07_fn = vars.run_if[97] - vars.trial_seq;
	vars.s07_ns = vars.run_if[98] - vars.trial_seq;
	vars.s07_nn = vars.run_if[99] - vars.trial_seq;
	vars.s08_fs = vars.run_if[100] - vars.trial_seq;
	vars.s08_fn = vars.run_if[101] - vars.trial_seq;
	vars.s08_ns = vars.run_if[102] - vars.trial_seq;
	vars.s08_nn = vars.run_if[103] - vars.trial_seq;
	vars.t01_fs = vars.run_if[104] - vars.trial_seq;
	vars.t01_fn = vars.run_if[105] - vars.trial_seq;
	vars.t01_ns = vars.run_if[106] - vars.trial_seq;
	vars.t01_nn = vars.run_if[107] - vars.trial_seq;
	vars.t02_fs = vars.run_if[108] - vars.trial_seq;
	vars.t02_fn = vars.run_if[109] - vars.trial_seq;
	vars.t02_ns = vars.run_if[110] - vars.trial_seq;
	vars.t02_nn = vars.run_if[111] - vars.trial_seq;
	vars.t03_fs = vars.run_if[112] - vars.trial_seq;
	vars.t03_fn = vars.run_if[113] - vars.trial_seq;
	vars.t03_ns = vars.run_if[114] - vars.trial_seq;
	vars.t03_nn = vars.run_if[115] - vars.trial_seq;
	vars.t04_fs = vars.run_if[116] - vars.trial_seq;
	vars.t04_fn = vars.run_if[117] - vars.trial_seq;
	vars.t04_ns = vars.run_if[118] - vars.trial_seq;
	vars.t04_nn = vars.run_if[119] - vars.trial_seq;
	vars.t05_fs = vars.run_if[120] - vars.trial_seq;
	vars.t05_fn = vars.run_if[121] - vars.trial_seq;
	vars.t05_ns = vars.run_if[122] - vars.trial_seq;
	vars.t05_nn = vars.run_if[123] - vars.trial_seq;
	vars.t06_fs = vars.run_if[124] - vars.trial_seq;
	vars.t06_fn = vars.run_if[125] - vars.trial_seq;
	vars.t06_ns = vars.run_if[126] - vars.trial_seq;
	vars.t06_nn = vars.run_if[127] - vars.trial_seq;
	vars.t07_fs = vars.run_if[128] - vars.trial_seq;
	vars.t07_fn = vars.run_if[129] - vars.trial_seq;
	vars.t07_ns = vars.run_if[130] - vars.trial_seq;
	vars.t07_nn = vars.run_if[131] - vars.trial_seq;
	vars.t08_fs = vars.run_if[132] - vars.trial_seq;
	vars.t08_fn = vars.run_if[133] - vars.trial_seq;
	vars.t08_ns = vars.run_if[134] - vars.trial_seq;
	vars.t08_nn = vars.run_if[135] - vars.trial_seq;
	vars.f01 = vars.run_if[0] - vars.trial_seq;
	vars.f02 = vars.run_if[1] - vars.trial_seq;
	vars.f03 = vars.run_if[2] - vars.trial_seq;
	vars.f04 = vars.run_if[3] - vars.trial_seq;
	vars.f05 = vars.run_if[4] - vars.trial_seq;
	vars.f06 = vars.run_if[5] - vars.trial_seq;
	vars.f07 = vars.run_if[6] - vars.trial_seq;
	vars.f08 = vars.run_if[7] - vars.trial_seq;
	
	// Increment trial count
	vars.trial_seq++;
	
	// Increment story count
	if(vars.trial_seq != 21){
	  vars.story_count++;
	}
	__end__

define inline_javascript trial_initiate
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	// shuffle(array) returns a set of random numbers:
	function shuffle(array) {
	    var i = array.length,
	        j = 0,
	        temp;
	
	    while (i--) {
	
	        j = Math.floor(Math.random() * (i+1));
	
	        // swap randomly chosen element with current element
	        temp = array[i];
	        array[i] = array[j];
	        array[j] = temp;
	
	    }
	
	    return array;
	}
	
	// Shuffle the adjustment numbers
	vars.ranAdj1 = shuffle([0,0,1,1,2,2,3,3]); // Entity
	vars.ranAdj2 = shuffle([0,0,1,1,2,2,3,3]); // Goal
	vars.ranAdj3 = shuffle([0,0,1,1,2,2,3,3]); // Spatial
	vars.ranAdj4 = shuffle([0,0,1,1,2,2,3,3]); // Temporal
	//vars.noAdj = [0,0,0,0,0,0,0,0]; // Filler
	// Decide the trial id to be run
	vars.ranAdj = vars.ranAdj1.concat(vars.ranAdj2, vars.ranAdj3,vars.ranAdj4);
	
	// Decide the condition index
	//vars.ranPos1 = shuffle([0,4,8,12,16,20,24,28]); // Entity
	//vars.ranPos2 = shuffle([32,36,40,44,48,52,56,60]); // Goal
	//vars.ranPos3 = shuffle([64,68,72,76,80,84,88,92]); // Spatial
	//vars.ranPos4 = shuffle([96,100,104,108,112,116,120,124]); // Temporal 
	//0,4,
	vars.ranPos = [8,12,16,20,24,28,32,36,40,44,48,52,56,60,64,68,72,76,80,84,88,92,96,100,104,108,112,116,120,124,128,132];
	
	vars.ranPos[0] = vars.ranPos[0] + vars.ranAdj[0]; // Entity 1 candidate passage 
	vars.ranPos[1] = vars.ranPos[1] + vars.ranAdj[1]; // Entity 2 candidate passage 
	vars.ranPos[2] = vars.ranPos[2] + vars.ranAdj[2]; // Entity 3 candidate passage 
	vars.ranPos[3] = vars.ranPos[3] + vars.ranAdj[3]; // Entity 4 candidate passage
	vars.ranPos[4] = vars.ranPos[4] + vars.ranAdj[4]; // Entity 5 candidate passage
	vars.ranPos[5] = vars.ranPos[5] + vars.ranAdj[5]; // Entity 6 candidate passage
	vars.ranPos[6] = vars.ranPos[6] + vars.ranAdj[6]; // Entity 7 candidate passage
	vars.ranPos[7] = vars.ranPos[7] + vars.ranAdj[7]; // Entity 8 candidate passage
	vars.ranPos[8] = vars.ranPos[8] + vars.ranAdj[8]; // Goal 1 candidate passage
	vars.ranPos[9] = vars.ranPos[9] + vars.ranAdj[9]; // Goal 2 candidate passage
	vars.ranPos[10] = vars.ranPos[10] + vars.ranAdj[10]; // Goal 3 candidate passage
	vars.ranPos[11] = vars.ranPos[11] + vars.ranAdj[11]; // Goal 4 candidate passage
	vars.ranPos[12] = vars.ranPos[12] + vars.ranAdj[12]; // Goal 5 candidate passage
	vars.ranPos[13] = vars.ranPos[13] + vars.ranAdj[13]; // Goal 6 candidate passage
	vars.ranPos[14] = vars.ranPos[14] + vars.ranAdj[14]; // Goal 7 candidate passage
	vars.ranPos[15] = vars.ranPos[15] + vars.ranAdj[15]; // Goal 8 candidate passage
	vars.ranPos[16] = vars.ranPos[16] + vars.ranAdj[16]; // Spatial 1 candidate passage
	vars.ranPos[17] = vars.ranPos[17] + vars.ranAdj[17]; // Spatial 2 candidate passage
	vars.ranPos[18] = vars.ranPos[18] + vars.ranAdj[18]; // Spatial 3 candidate passage
	vars.ranPos[19] = vars.ranPos[19] + vars.ranAdj[19]; // Spatial 4 candidate passage
	vars.ranPos[20] = vars.ranPos[20] + vars.ranAdj[20]; // Spatial 5 candidate passage
	vars.ranPos[21] = vars.ranPos[21] + vars.ranAdj[21]; // Spatial 6 candidate passage
	vars.ranPos[22] = vars.ranPos[22] + vars.ranAdj[22]; // Spatial 7 candidate passage
	vars.ranPos[23] = vars.ranPos[23] + vars.ranAdj[23]; // Spatial 8 candidate passage
	vars.ranPos[24] = vars.ranPos[24] + vars.ranAdj[24]; // Temporal 1 candidate passage
	vars.ranPos[25] = vars.ranPos[25] + vars.ranAdj[25]; // Temporal 2 candidate passage
	vars.ranPos[26] = vars.ranPos[26] + vars.ranAdj[26]; // Temporal 3 candidate passage
	vars.ranPos[27] = vars.ranPos[27] + vars.ranAdj[27]; // Temporal 4 candidate passage
	vars.ranPos[28] = vars.ranPos[28] + vars.ranAdj[28]; // Temporal 5 candidate passage
	vars.ranPos[29] = vars.ranPos[29] + vars.ranAdj[29]; // Temporal 6 candidate passage
	vars.ranPos[30] = vars.ranPos[30] + vars.ranAdj[30]; // Temporal 7 candidate passage
	vars.ranPos[31] = vars.ranPos[31] + vars.ranAdj[31]; // Temporal 8 candidate passage
	//vars.ranPos[32] = vars.ranPos[32] + vars.all_ranAdj[32];
	//vars.ranPos[33] = vars.ranPos[33] + vars.all_ranAdj[33];
	//vars.ranPos[34] = vars.ranPos[34] + vars.all_ranAdj[34];
	//vars.ranPos[35] = vars.ranPos[35] + vars.all_ranAdj[35];
	//vars.ranPos[36] = vars.ranPos[36] + vars.all_ranAdj[36];
	//vars.ranPos[37] = vars.ranPos[37] + vars.all_ranAdj[37];
	//vars.ranPos[38] = vars.ranPos[38] + vars.all_ranAdj[38];
	//vars.ranPos[39] = vars.ranPos[39] + vars.all_ranAdj[39];
	// Prepare the index of run_if
	//var ranPos = vars.ranNums.map(function (num, idx) {
	//  return num + vars.all_ranAdj[idx];
	//}); 
	
	
	
	// index of running trial
	vars.exp_seq = [1,2,3,4,5,6,7,8,9,10,11,12,13,14,15,16,17,18,19,20,22,23,24,25,26,27,28,29,30,31,32,33,34,35,36,37,38,39,40,41];
	// block index: 1~8; every 5 elements in exp_seq organize a block 
	vars.block = shuffle([0,1,2,3,4,5,6,7]);
	// order index: 1~5; 
	vars.ranOrder1 = shuffle([0,1,2,3,4]); // block1
	vars.ranOrder2 = shuffle([0,1,2,3,4]); // block2
	vars.ranOrder3 = shuffle([0,1,2,3,4]); // block3
	vars.ranOrder4 = shuffle([0,1,2,3,4]); // block4
	vars.ranOrder5 = shuffle([0,1,2,3,4]); // block5
	vars.ranOrder6 = shuffle([0,1,2,3,4]); // block6
	vars.ranOrder7 = shuffle([0,1,2,3,4]); // block7
	vars.ranOrder8 = shuffle([0,1,2,3,4]); // block8
	
	
	// initiate run_if
	vars.run_if = [0,0,0,0,0,0,0,0,0,0,0,0,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0];
	
	// Assign default value in run_if
	vars.run_if[vars.ranPos[0]] = vars.exp_seq[5*vars.block[0]+vars.ranOrder1[0]]; // Entity 1 selected passage 
	vars.run_if[vars.ranPos[1]] = vars.exp_seq[5*vars.block[1]+vars.ranOrder2[0]]; // Entity 2 selected passage 
	vars.run_if[vars.ranPos[2]] = vars.exp_seq[5*vars.block[2]+vars.ranOrder3[0]]; // Entity 3 selected passage 
	vars.run_if[vars.ranPos[3]] = vars.exp_seq[5*vars.block[3]+vars.ranOrder4[0]]; // Entity 4 selected passage 
	vars.run_if[vars.ranPos[4]] = vars.exp_seq[5*vars.block[4]+vars.ranOrder5[0]]; // Entity 5 selected passage 
	vars.run_if[vars.ranPos[5]] = vars.exp_seq[5*vars.block[5]+vars.ranOrder6[0]]; // Entity 6 selected passage 
	vars.run_if[vars.ranPos[6]] = vars.exp_seq[5*vars.block[6]+vars.ranOrder7[0]]; // Entity 7 selected passage 
	vars.run_if[vars.ranPos[7]] = vars.exp_seq[5*vars.block[7]+vars.ranOrder8[0]]; // Entity 8 selected passage  
	vars.run_if[vars.ranPos[8]] =  vars.exp_seq[5*vars.block[0]+vars.ranOrder1[1]]; // Goal 1 selected passage
	vars.run_if[vars.ranPos[9]] =  vars.exp_seq[5*vars.block[1]+vars.ranOrder2[1]]; // Goal 2 selected passage
	vars.run_if[vars.ranPos[10]] = vars.exp_seq[5*vars.block[2]+vars.ranOrder3[1]]; // Goal 3 selected passage
	vars.run_if[vars.ranPos[11]] = vars.exp_seq[5*vars.block[3]+vars.ranOrder4[1]]; // Goal 4 selected passage
	vars.run_if[vars.ranPos[12]] = vars.exp_seq[5*vars.block[4]+vars.ranOrder5[1]]; // Goal 5 selected passage
	vars.run_if[vars.ranPos[13]] = vars.exp_seq[5*vars.block[5]+vars.ranOrder6[1]]; // Goal 6 selected passage
	vars.run_if[vars.ranPos[14]] = vars.exp_seq[5*vars.block[6]+vars.ranOrder7[1]]; // Goal 7 selected passage
	vars.run_if[vars.ranPos[15]] = vars.exp_seq[5*vars.block[7]+vars.ranOrder8[1]]; // Goal 8 selected passage
	vars.run_if[vars.ranPos[16]] = vars.exp_seq[5*vars.block[0]+vars.ranOrder1[2]]; // Spatial 1 selected passage
	vars.run_if[vars.ranPos[17]] = vars.exp_seq[5*vars.block[1]+vars.ranOrder2[2]]; // Spatial 2 selected passage
	vars.run_if[vars.ranPos[18]] = vars.exp_seq[5*vars.block[2]+vars.ranOrder3[2]]; // Spatial 3 selected passage
	vars.run_if[vars.ranPos[19]] = vars.exp_seq[5*vars.block[3]+vars.ranOrder4[2]]; // Spatial 4 selected passage
	vars.run_if[vars.ranPos[20]] = vars.exp_seq[5*vars.block[4]+vars.ranOrder5[2]]; // Spatial 5 selected passage
	vars.run_if[vars.ranPos[21]] = vars.exp_seq[5*vars.block[5]+vars.ranOrder6[2]]; // Spatial 6 selected passage
	vars.run_if[vars.ranPos[22]] = vars.exp_seq[5*vars.block[6]+vars.ranOrder7[2]]; // Spatial 7 selected passage
	vars.run_if[vars.ranPos[23]] = vars.exp_seq[5*vars.block[7]+vars.ranOrder8[2]]; // Spatial 8 selected passage
	vars.run_if[vars.ranPos[24]] = vars.exp_seq[5*vars.block[0]+vars.ranOrder1[3]]; // Temporal 1 selected passage
	vars.run_if[vars.ranPos[25]] = vars.exp_seq[5*vars.block[1]+vars.ranOrder2[3]]; // Temporal 2 selected passage
	vars.run_if[vars.ranPos[26]] = vars.exp_seq[5*vars.block[2]+vars.ranOrder3[3]]; // Temporal 3 selected passage
	vars.run_if[vars.ranPos[27]] = vars.exp_seq[5*vars.block[3]+vars.ranOrder4[3]]; // Temporal 4 selected passage
	vars.run_if[vars.ranPos[28]] = vars.exp_seq[5*vars.block[4]+vars.ranOrder5[3]]; // Temporal 5 selected passage
	vars.run_if[vars.ranPos[29]] = vars.exp_seq[5*vars.block[5]+vars.ranOrder6[3]]; // Temporal 6 selected passage
	vars.run_if[vars.ranPos[30]] = vars.exp_seq[5*vars.block[6]+vars.ranOrder7[3]]; // Temporal 7 selected passage
	vars.run_if[vars.ranPos[31]] = vars.exp_seq[5*vars.block[7]+vars.ranOrder8[3]]; // Temporal 8 selected passage
	vars.run_if[0] = vars.exp_seq[5*vars.block[0]+vars.ranOrder1[4]];
	vars.run_if[1] = vars.exp_seq[5*vars.block[1]+vars.ranOrder2[4]];
	vars.run_if[2] = vars.exp_seq[5*vars.block[2]+vars.ranOrder3[4]];
	vars.run_if[3] = vars.exp_seq[5*vars.block[3]+vars.ranOrder4[4]];
	vars.run_if[4] = vars.exp_seq[5*vars.block[4]+vars.ranOrder5[4]];
	vars.run_if[5] = vars.exp_seq[5*vars.block[5]+vars.ranOrder6[4]];
	vars.run_if[6] = vars.exp_seq[5*vars.block[6]+vars.ranOrder7[4]];
	vars.run_if[7] = vars.exp_seq[5*vars.block[7]+vars.ranOrder8[4]];
	
	// Initiate the trial count
	vars.trial_seq = 0;
	
	// Initiate the story count
	vars.story_count = 0;
	__end__
	set _prepare ""

define sequence trial_seq
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_assign_computing always
	run count_board "[trial_seq]!=21"
	run contiue_space always
	run passage_E01_FS "[e01_fs]=1"
	run passage_E01_FN "[e01_fn]=1"
	run passage_E01_NS "[e01_ns]=1"
	run passage_E01_NN "[e01_nn]=1"
	run passage_E02_FS "[e02_fs]=1"
	run passage_E02_FN "[e02_fn]=1"
	run passage_E02_NS "[e02_ns]=1"
	run passage_E02_NN "[e02_nn]=1"
	run passage_E03_FS "[e03_fs]=1"
	run passage_E03_FN "[e03_fn]=1"
	run passage_E03_NS "[e03_ns]=1"
	run passage_E03_NN "[e03_nn]=1"
	run passage_E04_FS "[e04_fs]=1"
	run passage_E04_FN "[e04_fn]=1"
	run passage_E04_NS "[e04_ns]=1"
	run passage_E04_NN "[e04_nn]=1"
	run passage_E05_FS "[e05_fs]=1"
	run passage_E05_FN "[e05_fn]=1"
	run passage_E05_NS "[e05_ns]=1"
	run passage_E05_NN "[e05_nn]=1"
	run passage_E06_FS "[e06_fs]=1"
	run passage_E06_FN "[e06_fn]=1"
	run passage_E06_NS "[e06_ns]=1"
	run passage_E06_NN "[e06_nn]=1"
	run passage_E07_FS "[e07_fs]=1"
	run passage_E07_FN "[e07_fn]=1"
	run passage_E07_NS "[e07_ns]=1"
	run passage_E07_NN "[e07_nn]=1"
	run passage_E08_FS "[e08_fs]=1"
	run passage_E08_FN "[e08_fn]=1"
	run passage_E08_NS "[e08_ns]=1"
	run passage_E08_NN "[e08_nn]=1"
	run passage_G01_FS "[g01_fs]=1"
	run passage_G01_FN "[g01_fn]=1"
	run passage_G01_NS "[g01_ns]=1"
	run passage_G01_NN "[g01_nn]=1"
	run passage_G02_FS "[g02_fs]=1"
	run passage_G02_FN "[g02_fn]=1"
	run passage_G02_NS "[g02_ns]=1"
	run passage_G02_NN "[g02_nn]=1"
	run passage_G03_FS "[g03_fs]=1"
	run passage_G03_FN "[g03_fn]=1"
	run passage_G03_NS "[g03_ns]=1"
	run passage_G03_NN "[g03_nn]=1"
	run passage_G04_FS "[g04_fs]=1"
	run passage_G04_FN "[g04_fn]=1"
	run passage_G04_NS "[g04_ns]=1"
	run passage_G04_NN "[g04_nn]=1"
	run passage_G05_FS "[g05_fs]=1"
	run passage_G05_FN "[g05_fn]=1"
	run passage_G05_NS "[g05_ns]=1"
	run passage_G05_NN "[g05_nn]=1"
	run passage_G06_FS "[g06_fs]=1"
	run passage_G06_FN "[g06_fn]=1"
	run passage_G06_NS "[g06_ns]=1"
	run passage_G06_NN "[g06_nn]=1"
	run passage_G07_FS "[g07_fs]=1"
	run passage_G07_FN "[g07_fn]=1"
	run passage_G07_NS "[g07_ns]=1"
	run passage_G07_NN "[g07_nn]=1"
	run passage_G08_FS "[g08_fs]=1"
	run passage_G08_FN "[g08_fn]=1"
	run passage_G08_NS "[g08_ns]=1"
	run passage_G08_NN "[g08_nn]=1"
	run passage_S01_FS "[s01_fs]=1"
	run passage_S01_FN "[s01_fn]=1"
	run passage_S01_NS "[s01_ns]=1"
	run passage_S01_NN "[s01_nn]=1"
	run passage_S02_FS "[s02_fs]=1"
	run passage_S02_FN "[s02_fn]=1"
	run passage_S02_NS "[s02_ns]=1"
	run passage_S02_NN "[s02_nn]=1"
	run passage_S03_FS "[s03_fs]=1"
	run passage_S03_FN "[s03_fn]=1"
	run passage_S03_NS "[s03_ns]=1"
	run passage_S03_NN "[s03_nn]=1"
	run passage_S04_FS "[s04_fs]=1"
	run passage_S04_FN "[s04_fn]=1"
	run passage_S04_NS "[s04_ns]=1"
	run passage_S04_NN "[s04_nn]=1"
	run passage_S05_FS "[s05_fs]=1"
	run passage_S05_FN "[s05_fn]=1"
	run passage_S05_NS "[s05_ns]=1"
	run passage_S05_NN "[s05_nn]=1"
	run passage_S06_FS "[s06_fs]=1"
	run passage_S06_FN "[s06_fn]=1"
	run passage_S06_NS "[s06_ns]=1"
	run passage_S06_NN "[s06_nn]=1"
	run passage_S07_FS "[s07_fs]=1"
	run passage_S07_FN "[s07_fn]=1"
	run passage_S07_NS "[s07_ns]=1"
	run passage_S07_NN "[s07_nn]=1"
	run passage_S08_FS "[s08_fs]=1"
	run passage_S08_FN "[s08_fn]=1"
	run passage_S08_NS "[s08_ns]=1"
	run passage_S08_NN "[s08_nn]=1"
	run passage_T01_FS "[t01_fs]=1"
	run passage_T01_FN "[t01_fn]=1"
	run passage_T01_NS "[t01_ns]=1"
	run passage_T01_NN "[t01_nn]=1"
	run passage_T02_FS "[t02_fs]=1"
	run passage_T02_FN "[t02_fn]=1"
	run passage_T02_NS "[t02_ns]=1"
	run passage_T02_NN "[t02_nn]=1"
	run passage_T03_FS "[t03_fs]=1"
	run passage_T03_FN "[t03_fn]=1"
	run passage_T03_NS "[t03_ns]=1"
	run passage_T03_NN "[t03_nn]=1"
	run passage_T04_FS "[t04_fs]=1"
	run passage_T04_FN "[t04_fn]=1"
	run passage_T04_NS "[t04_ns]=1"
	run passage_T04_NN "[t04_nn]=1"
	run passage_T05_FS "[t05_fs]=1"
	run passage_T05_FN "[t05_fn]=1"
	run passage_T05_NS "[t05_ns]=1"
	run passage_T05_NN "[t05_nn]=1"
	run passage_T06_FS "[t06_fs]=1"
	run passage_T06_FN "[t06_fn]=1"
	run passage_T06_NS "[t06_ns]=1"
	run passage_T06_NN "[t06_nn]=1"
	run passage_T07_FS "[t07_fs]=1"
	run passage_T07_FN "[t07_fn]=1"
	run passage_T07_NS "[t07_ns]=1"
	run passage_T07_NN "[t07_nn]=1"
	run passage_T08_FS "[t08_fs]=1"
	run passage_T08_FN "[t08_fn]=1"
	run passage_T08_NS "[t08_ns]=1"
	run passage_T08_NN "[t08_nn]=1"
	run passage_F01 "[f01]=1"
	run passage_F02 "[f02]=1"
	run passage_F03 "[f03]=1"
	run passage_F04 "[f04]=1"
	run passage_F05 "[f05]=1"
	run passage_F06 "[f06]=1"
	run passage_F07 "[f07]=1"
	run passage_F08 "[f08]=1"
	run Break "[trial_seq]=21"

