---
API: 2.1
OpenSesame: 3.3.3
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title Self_pacing_test
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "D:/core/Research/projects/Mnetal_Simulation/Siutation_MW"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set background white

define loop Condition_Assignment
	set source table
	set repeat 0.5
	set order random
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 condition_assign 1
	setcycle 1 condition_assign 2
	run instruction

define sketchpad Passage_board
	set duration 0
	set description "Displays stimuli"
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[condition_assign]=0 or [condition_assign]=1" text="[line_text]" x=-450 y=-200 z_index=0
	draw textline center=0 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[condition_assign]=0 or [condition_assign]=2" text="[line_text]" x=-450 y=-200 z_index=0

define keyboard_response Passage_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses SPACE

define keyboard_response Probe_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "y;n"

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Condition_Assignment always
	run passages always

define keyboard_response instruct_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response SPACE
	set allowed_responses SPACE

define loop instruction
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 instruct_num 1
	setcycle 0 instruct_text "The goal of this study is to learn how mind wandering affects how you<br/>learn information during reading. Mind wandering is a term used to<br/>describe what occurs when your attention wanders from a task. <br/>Sometimes when your mind wanders, you begin thinking about personal <br/>events or concerns rather than your task. At other times, your mind <br/>can wander because you are bored or tired and you don’t really know <br/>what you’re thinking about; all you know is that you are no longer <br/>thinking about your task. <br/><br/>Please press space bar to continue.<br/>"
	setcycle 1 instruct_num 2
	setcycle 1 instruct_text "In this experiment, you will read 8 passages and answer reading<br/>comprehension questions for each passage. THE PASSAGES WILL BE <br/>PRESENTED IN A SENTENCE-BY-SENTENCE FASHION. PLEASE READ THE <br/>SENTENCES AT YOUR NORMAL READING PACE. ONCE YOU HAVE FINISHED READING <br/>ONE SENTENCE, PRESS THE SPACE KEY TO MOVE ON TO THE NEXT SENTENCE. <br/>Once you've read the sentence you MAY NOT GO BACK.<br/><br/>Please press space bar to continue.<br/>"
	setcycle 2 instruct_num 3
	setcycle 2 instruct_text "THE SET OF READING COMPREHENSION QUESTIONS FOR THAT PARTICULAR <br/>PASSAGE YOU’VE FINISHED READING WILL APPEAR AFTER EACH PASSAGE, not <br/>all together at the end. Like the sentences, once you've answered the <br/>questions you MAY NOT GO BACK TO CHANGE YOUR ANSWER.<br/><br/>Please press space bar to continue."
	setcycle 3 instruct_num 4
	setcycle 3 instruct_text "Additionally, while you are reading you will be randomly interrupted <br/>and asked “WERE YOU MIND WANDERING WHEN YOU READ THE PREVIOUS <br/>SENTENCE?\" as the question will appear on screen. That is, whether <br/>your thoughts were off-task rather than focusing on the prior <br/>sentence, in which you would have to choose either “Yes” or “No” by <br/>pressing the \"Y\" for Yes or \"N\" for No on your keyboard. <br/><br/>Please press space bar to continue.<br/>"
	setcycle 4 instruct_num 5
	setcycle 4 instruct_text "This entire experiment is self-paced. Though of course you should try <br/>NOT TO go over the experiment's ending time. So try to do the task <br/>all the way through instead of taking too many small breaks in between.<br/>The experiment isn't long so you should be able to do it without <br/>taking any breaks. <br/><br/>Please press space bar to continue.<br/>"
	setcycle 5 instruct_num 6
	setcycle 5 instruct_text "Do you have any questions so far?<br /><br/>If not, you may press the spacebar key to read the first passage."
	run instruction1

define sequence instruction1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instruction1_1 always
	run instruct_response always

define sketchpad instruction1_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="[instruct_text]" x=-350 y=-224 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define loop passage_T06_FN
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift n
	setcycle 0 correct_response space
	setcycle 0 line 1
	setcycle 0 line_text "Juan’s meeting with the boss didn’t quite go as planned."
	setcycle 0 passage 6
	setcycle 0 probe n
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift n
	setcycle 1 correct_response space
	setcycle 1 line 2
	setcycle 1 line_text "He sat at his desk snacking on mixed nuts."
	setcycle 1 passage 6
	setcycle 1 probe n
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift n
	setcycle 2 correct_response space
	setcycle 2 line 3
	setcycle 2 line_text "He was going to have to finish the new designs before the next client meeting."
	setcycle 2 passage 6
	setcycle 2 probe n
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift n
	setcycle 3 correct_response space
	setcycle 3 line 4
	setcycle 3 line_text "It was going to take all night."
	setcycle 3 passage 6
	setcycle 3 probe n
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift n
	setcycle 4 correct_response space
	setcycle 4 line 5
	setcycle 4 line_text "The next morning, he reached for his coffee before remembering the cup was empty."
	setcycle 4 passage 6
	setcycle 4 probe n
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift n
	setcycle 5 correct_response space
	setcycle 5 line 6
	setcycle 5 line_text "At least there was more in the break room. "
	setcycle 5 passage 6
	setcycle 5 probe n
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift n
	setcycle 6 correct_response space
	setcycle 6 line 7
	setcycle 6 line_text "He really needed to focus on the designs."
	setcycle 6 passage 6
	setcycle 6 probe n
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift n
	setcycle 7 correct_response y
	setcycle 7 line 0
	setcycle 7 line_text "Did you see this word in this story?<br/>SNACKING"
	setcycle 7 passage 6
	setcycle 7 probe y
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift n
	setcycle 8 correct_response n
	setcycle 8 line 0
	setcycle 8 line_text "Is this true for this story?</br>Juan’s meeting went as expected."
	setcycle 8 passage 6
	setcycle 8 probe y
	run passage_sequence

define loop passage_T06_FS
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 passage 6
	setcycle 0 line 1
	setcycle 0 line_text "Juan’s meeting with the boss didn’t quite go as planned."
	setcycle 0 probe n
	setcycle 0 correct_response space
	setcycle 0 Dimension Temporal
	setcycle 0 Foreshadow y
	setcycle 0 Shift y
	setcycle 1 passage 6
	setcycle 1 line 2
	setcycle 1 line_text "He sat at his desk snacking on mixed nuts."
	setcycle 1 probe n
	setcycle 1 correct_response space
	setcycle 1 Dimension Temporal
	setcycle 1 Foreshadow y
	setcycle 1 Shift y
	setcycle 2 passage 6
	setcycle 2 line 3
	setcycle 2 line_text "He was going to have to finish the new designs before the next client meeting."
	setcycle 2 probe n
	setcycle 2 correct_response space
	setcycle 2 Dimension Temporal
	setcycle 2 Foreshadow y
	setcycle 2 Shift y
	setcycle 3 passage 6
	setcycle 3 line 4
	setcycle 3 line_text "It was going to take all night."
	setcycle 3 probe n
	setcycle 3 correct_response space
	setcycle 3 Dimension Temporal
	setcycle 3 Foreshadow y
	setcycle 3 Shift y
	setcycle 4 passage 6
	setcycle 4 line 5
	setcycle 4 line_text "The next morning, he reached for his coffee before remembering the cup was empty."
	setcycle 4 probe n
	setcycle 4 correct_response space
	setcycle 4 Dimension Temporal
	setcycle 4 Foreshadow y
	setcycle 4 Shift y
	setcycle 5 passage 6
	setcycle 5 line 6
	setcycle 5 line_text "At least the designs were finished."
	setcycle 5 probe n
	setcycle 5 correct_response space
	setcycle 5 Dimension Temporal
	setcycle 5 Foreshadow y
	setcycle 5 Shift y
	setcycle 6 passage 6
	setcycle 6 line 7
	setcycle 6 line_text "He could probably get a couple of hours of sleep before the meeting."
	setcycle 6 probe n
	setcycle 6 correct_response space
	setcycle 6 Dimension Temporal
	setcycle 6 Foreshadow y
	setcycle 6 Shift y
	setcycle 7 passage 6
	setcycle 7 line 0
	setcycle 7 line_text "Did you see this word in this story?<br/>SNACKING"
	setcycle 7 probe y
	setcycle 7 correct_response y
	setcycle 7 Dimension Temporal
	setcycle 7 Foreshadow y
	setcycle 7 Shift y
	setcycle 8 passage 6
	setcycle 8 line 0
	setcycle 8 line_text "Is this true for this story?</br>Juan’s meeting went as expected."
	setcycle 8 probe y
	setcycle 8 correct_response n
	setcycle 8 Dimension Temporal
	setcycle 8 Foreshadow y
	setcycle 8 Shift y
	run passage_sequence

define sequence passage_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Passage_board always
	run Passage_response "[probe]=n"
	run Probe_response "[probe] = y"
	run logger always

define sequence passages
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run passage_T06_FS "[condition_assign]=1"
	run passage_T06_FN "[condition_assign]=2"

